PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TSRlearn_context_image_presentation
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine exp_settings
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    CodeComponent set_variables
      Code Type = Auto->JS
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      Begin Experiment:
        font_name = "Open Sans"
        font_size = 0.03

        language = "german"
        left_key ="g"
        up_key = "r"
        right_key = "b"
        down_key = "y"

        allowed_keys = [left_key, up_key, right_key, down_key]

        fast_img_dur = 0.112 # [s]
        mask_dur = 0.048 # [s]
        fast_img_repetitions = 30
    CodeComponent set_trigger_numbers
      Code Type = Auto->JS
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      Begin Experiment:
        # define which trigger numbers to send
        trigger_numbers_dict = {
        "start/end": 255,
        "context image presentation": 166,
        "fixation cross": 94,
        "question remember": 95,
        "break_start": 81,
        "break_end": 82
        }
    CodeComponent functions_imports
      Code Type = Auto->JS
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      Begin Experiment:
        # log function that saves variables to log file
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)


        import meg_triggers
        from meg_triggers import send_trigger
        meg_triggers.set_default_duration(0.005)
        meg_triggers.set_default_reset_value(0)  # set the value the trigger channel returns to for neutral state
        # meg_triggers.enable_printing()
    CodeComponent bids_logging_functions
      Code Type = Auto->JS
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      Begin Experiment:
        # --- BIDS event logger (no Builder BIDS components needed) ---
        from pathlib import Path
        import csv
        import numpy as np
        import atexit

        class BIDSLogger:
            def __init__(self, win, clock, default_cols=None):
                self.win = win
                self.clock = clock
                self.rows = []          # list of dicts -> will become events.tsv
                self.active = {}        # stim -> row index (for duration)
                self.defaults = default_cols or {}

                # fixed column order (add any you want to see in the TSV)
                self.col_order = [
                    "subject", "trial_num",
                    "component_label", "onset", "duration",
                    "type_of_stimulus",
                    "response_time", "response",
                    "expected_response",
                ]

            # schedule logging of onset on the *next* flip (exactly when the stim appears)
            def schedule_onset(self, stim, **extra_cols):
                 # Onset: first frame it is STARTED
                if getattr(stim, "status", None) == STARTED and stim not in self.active:
                    # Builder already records exact onset on flip into tStartRefresh;
                    # fall back to current clock if that isn't available.
                    t_on = getattr(stim, "tStartRefresh", None)
                    if t_on is None:
                        t_on = self.clock.getTime()
                    row = {
                        "onset": float(t_on),
                        "duration": np.nan,
                    }
                    row.update(self.defaults)
                    row.update(extra_cols)
                    self.rows.append(row)
                    self.active[stim] = len(self.rows) - 1

            # to log the offset and therefore compute durations of components
            def mark_offset(self, stim):
                if getattr(stim, "status", None) == FINISHED and stim in self.active:
                    idx = self.active.pop(stim)
                    t_off = getattr(stim, "tStopRefresh", None)
                    if t_off is None:
                        t_off = self.clock.getTime()
                    self.rows[idx]["duration"] = float(t_off - self.rows[idx]["onset"])

            # log a one-shot event right now (no duration), e.g., button press
            def add_instant(self, trial_type, **extra_cols):
                row = {"onset": float(self.clock.getTime()), "duration": 0.0,
                       "type_of_stimulus": trial_type}
                row.update(self.defaults)
                row.update(extra_cols)
                self.rows.append(row)

            # write out a BIDS-like events.tsv
            def save(self, filename_base):
                out = Path(filename_base).with_suffix("")  # strip .csv/.log if present
                out = out.parent / (out.name + "_events.tsv")

                # union of all keys, but keep preferred order first
                all_keys = list(self.col_order)
                for r in self.rows:
                    for k in r.keys():
                        if k not in all_keys:
                            all_keys.append(k)

                with open(out, "w", newline="", encoding="utf-8") as f:
                    w = csv.DictWriter(f, fieldnames=all_keys, delimiter="\t", extrasaction="ignore")
                    w.writeheader()
                    for r in self.rows:
                        # convert Nones to "n/a" for BIDS friendliness
                        out_row = {k: ("n/a" if (r.get(k) is None or (isinstance(r.get(k), float) and np.isnan(r.get(k)))) else r.get(k))
                                   for k in all_keys}
                        w.writerow(out_row)

                return str(out)
        # set global clock as default because we need it for timing
        bids = None

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        def _bids_autosave():
            try:
                if bids and hasattr(bids, "rows"):
                    out = bids.save(thisExp.dataFileName)
                    print(f"[autosave] BIDS events written to: {out}")
            except Exception as e:
                print(f"[autosave] Failed to save BIDS events: {e}")
      Begin Routine:
        # ---- Create the logger once ----
        bids = BIDSLogger(
            win=win,
            clock=globalClock,
            default_cols=dict(
                subject=expInfo.get("participant")
            )
        )

        # write a header-only file immediately so each start creates a file
        _ = bids.save(thisExp.dataFileName)

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        atexit.register(_bids_autosave)
    CodeComponent set_ppt_id
      Code Type = Auto->JS
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      Begin Routine:
        ppt_id = expInfo["participant"]
  Routine beginning_instruction
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    CodeComponent set_trigger_startexp
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(value=trigger_numbers_dict["start/end"])
    TextComponent instruction_begin
      font = $font_name
      letterHeight = font_size
      startVal [time (s)] = 0.0
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    CodeComponent set_instruction_begin
      Code Type = Auto->JS
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      Begin Routine:
        if language == "german":
            instruction_begin.text = (
                "Sie sehen nun die Hintergrundbilder aus der Aufgabe noch einmal. "
                "Jedes Hintergrundbild wird 5 Sekunden lang gezeigt. "
                "Solange das Bild zu sehen ist, denken Sie bitte an die Bildsequenz, "
                "die zu diesem Hintergrundbild gehört.\n"
                "[Drücken Sie eine beliebige Taste, wenn Sie bereit sind.]"
            )
        elif language == "english":
            instruction_begin.text = (
                "You will now see the background images from the task again. "
                "Each background image is shown for 5 seconds. "
                "While the image is on screen, think of the image sequence "
                "that belongs to this background image.\n"
                "[Press any key when you are ready.]"
            )
        elif language == "french":
            instruction_begin.text = (
                "Vous allez revoir les images de fond de la tâche. "
                "Chaque image de fond est affichée pendant 5 secondes. "
                "Tant que l’image est affichée, pensez à la séquence d’images "
                "associée à cette image de fond.\n"
                "[Appuyez sur une touche lorsque vous êtes prêt(e).]"
            )
    CodeComponent bids_instruc_01
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting

        bids.schedule_onset(instruction_begin,
                                type_of_stimulus="instructions",
                                component_label="instruction_general_remembering")
      End Routine:
        # log offset at last frame of routine

        bids.mark_offset(instruction_begin)
    KeyboardComponent continue_button
      allowedKeys = allowed_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine fixation
    CodeComponent set_trigger_fix_cross
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(value=trigger_numbers_dict["question remember"])
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    TextComponent text_which_sequence
      font = font_name
      letterHeight = font_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent bids_fixation
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(text_which_sequence,
                                type_of_stimulus="prompt",
                                component_label="prompt_remember_sequence",
        trial_num = trials_presentation.thisN)
      End Routine:
        bids.mark_offset(text_which_sequence)
    CodeComponent set_text_question_sequence
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            text_which_sequence.text = "Think about the associated image sequence!"
        elif language == "german":
            text_which_sequence.text = "Denken Sie an die zugehörige Bildsequenz!"
        elif language == "french":
            text_which_sequence.text = "Pensez à la séquence d’images associée !"
  Routine remember_story_instruction
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    CodeComponent story_whole_instruction
      Code Type = Auto->JS
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      Begin Routine:
        story_instr = {
            "german": [
                "Sie sehen nun die Hintergrundbilder aus der Aufgabe noch einmal. "
                "Jedes Hintergrundbild wird einmal gezeigt, danach erscheint ein Fixationskreuz.\n\n"
                "Solange das Kreuz zu sehen ist (15 Sekunden), erinnern Sie sich bitte an die Geschichte, "
                "die Sie sich beim Lernen ausgedacht haben, um sich die Bildsequenz zu diesem "
                "Hintergrundbild zu merken.\n\n"
                "[Drücken Sie eine beliebige Taste, um fortzufahren.]",

                "Während der 15 Sekunden:\n\n"
                "• Gehen Sie die Geschichte vom Anfang bis zum Ende durch, in der Reihenfolge der Bilder.\n\n"
                "• Wenn Sie am Ende angekommen sind, bevor das Kreuz verschwindet, beginnen Sie die "
                "Geschichte wieder von vorn.\n\n"
                "[Drücken Sie eine beliebige Taste, um fortzufahren.]",


                "• Wenn Ihnen ein Teil der Geschichte nicht einfällt, machen Sie mit dem nächsten Teil "
                "weiter, an den Sie sich erinnern.\n\n"
                "Schauen Sie dabei auf das Kreuz und denken Sie an nichts anderes.\n\n"
                "[Drücken Sie eine beliebige Taste, wenn Sie bereit sind.]",
            ],
            "english": [
                "You will now see the background images from the task again. "
                "Each background image is shown once, followed by a fixation cross.\n\n"
                "While the cross is on screen (15 seconds), recall the story you made up during learning "
                "to remember the image sequence for this background image.\n\n"
                "[Press any key to continue.]",

                "During the 15 seconds:\n\n"
                "• Go through the story from beginning to end, in the order of the images.\n\n"
                "• If you reach the end before the cross disappears, start the story again from the beginning.\n\n"
                "[Press any key to continue.]",

                "• If you cannot remember part of the story, continue with the next part you remember.\n\n"
                "Keep your eyes on the cross and do not think about anything else.\n\n"
                "[Press any key when you are ready.]",
            ],
            "french": [
                "Vous allez revoir les images de fond de la tâche. "
                "Chaque image de fond est présentée une fois, puis une croix de fixation apparaît.\n\n"
                "Tant que la croix est affichée (15 secondes), rappelez-vous l’histoire que vous avez "
                "inventée pendant l’apprentissage pour mémoriser la séquence d’images associée à cette "
                "image de fond.\n\n"
                "[Appuyez sur une touche pour continuer.]",

                "Pendant les 15 secondes :\n\n"
                "• Parcourez l’histoire du début à la fin, dans l’ordre des images.\n\n"
               "• Si vous arrivez à la fin avant que la croix ne disparaisse, recommencez l’histoire "
                "depuis le début.\n\n"
                "[Appuyez sur une touche pour continuer.]",


                "• Si vous ne vous souvenez plus d’une partie de l’histoire, continuez avec la partie "
                "suivante dont vous vous souvenez.\n\n"
                "Gardez les yeux sur la croix et ne pensez à rien d’autre.\n\n"
                "[Appuyez sur une touche lorsque vous êtes prêt(e).]",
            ],
        }
    TextComponent instruction_story1
      font = $font_name
      letterHeight = font_size
      startVal [time (s)] = 0.0
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    CodeComponent set_text_instruction_story1
      Code Type = Auto->JS
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      Begin Routine:
        instruction_story1.text = story_instr[language][0]   # routine 1: what happens
    KeyboardComponent continue_button_2
      allowedKeys = allowed_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent bids_instruc
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting

        bids.schedule_onset(instruction_story1,
                                type_of_stimulus="instructions",
                                component_label="instruction_story_remembering")
      End Routine:
        # log offset at last frame of routine

        bids.mark_offset(instruction_story1)
  Routine instruction_end
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    CodeComponent set_trigger_end
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(value=trigger_numbers_dict["start/end"])
    TextComponent instruction_part7
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent bids_instruc_7
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part7,
                                type_of_stimulus="instructions",
                                component_label="instruction_part7")
      End Routine:
        bids.mark_offset(instruction_part7)
    CodeComponent instruction_part7_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part7.text = (
            "You finished the last task block. Good job!\n"
            "Press any key to end this part of the experiment. "
            )

        if language == "german":
            instruction_part7.text = (
            "Sie haben den letzten Aufgabenblock abgeschlossen. Gut gemacht!\n"
            "Drücken Sie eine beliebige Taste, um diesen Teil des Experiments zu beenden." )

        if language == "french":
            instruction_part7.text = (
            "Vous avez terminé la dernière partie des exercices. Bravo!\n"
            "Appuyez sur une touche pour terminer cette partie de l'expérience. "
        )
    KeyboardComponent continue_button_5
      allowedKeys = allowed_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine remember_story_instruction2
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    TextComponent instruction_story2
      font = $font_name
      letterHeight = font_size
      startVal [time (s)] = 0.0
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    CodeComponent set_text_instruction_story2
      Code Type = Auto->JS
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      Begin Routine:
        instruction_story2.text = story_instr[language][1]
    KeyboardComponent continue_button_3
      allowedKeys = allowed_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine remember_story_instruction3
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    TextComponent instruction_story3
      font = $font_name
      letterHeight = font_size
      startVal [time (s)] = 0.0
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    CodeComponent set_text_instruction_story3
      Code Type = Auto->JS
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      Begin Routine:
        instruction_story3.text = story_instr[language][2]   # routine 1: what happens
    KeyboardComponent continue_button_4
      allowedKeys = allowed_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine context_img_presentation
    CodeComponent set_trigger_image
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(value=image_seq_trigger)
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    ImageComponent image
      image [set every repeat] = $image_file_context
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent bids_image
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(image,
                                type_of_stimulus="image",
                                component_label="image_context_remember",
        trial_num = trials_presentation.thisN)
      End Routine:
        bids.mark_offset(image)
  Routine context_image_story
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    CodeComponent set_trigger_image_2
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(value=image_seq_trigger)
    ImageComponent image_2
      image [set every repeat] = $image_file_context
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent bids_image_2
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(image_2,
                                type_of_stimulus="image",
                                component_label="image_context_story",
        trial_num = trials_retell_story.thisN)
      End Routine:
        bids.mark_offset(image_2)
  Routine fixation_story
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    CodeComponent set_trigger_fix_cross_2
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(value=trigger_numbers_dict["fixation cross"])
    TextComponent fix_cross_2
      font = font_name
      letterHeight = font_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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    CodeComponent bids_fixation_2
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(fix_cross_2,
                                type_of_stimulus="fix_cross",
                                component_label="fix_cross_remember",
        trial_num = trials_retell_story.thisN)
      End Routine:
        bids.mark_offset(fix_cross_2)
Flow
  Routine exp_settings
  Routine beginning_instruction
  LoopInitiator trials_presentation loopType="TrialHandler"
    conditionsFile = sequences/context_image_order.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_file_context': 'stimuli\\context_images\\sea_01.jpg', 'image_seq_trigger': 1},
      {'image_file_context': 'stimuli\\context_images\\forest_01.jpg', 'image_seq_trigger': 2},
      {'image_file_context': 'stimuli\\context_images\\desert_01.jpg', 'image_seq_trigger': 3},
      {'image_file_context': 'stimuli\\context_images\\snow_01.jpg', 'image_seq_trigger': 4}]
    Routine fixation
    Routine context_img_presentation
  LoopTerminator trials_presentation
  Routine remember_story_instruction
  Routine remember_story_instruction2
  Routine remember_story_instruction3
  LoopInitiator trials_retell_story loopType="TrialHandler"
    conditionsFile = sequences/context_image_order.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_file_context': 'stimuli\\context_images\\sea_01.jpg', 'image_seq_trigger': 1},
      {'image_file_context': 'stimuli\\context_images\\forest_01.jpg', 'image_seq_trigger': 2},
      {'image_file_context': 'stimuli\\context_images\\desert_01.jpg', 'image_seq_trigger': 3},
      {'image_file_context': 'stimuli\\context_images\\snow_01.jpg', 'image_seq_trigger': 4}]
    Routine context_image_story
    Routine fixation_story
  LoopTerminator trials_retell_story
  Routine instruction_end
