PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '00'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2025
  Window size (pixels) = [1536, 864]
  expName = TSRlearn_fast_sequences
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine exp_settings
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    CodeComponent set_variables
      Code Type = Auto->JS
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      Begin Experiment:
        font_name = "Open Sans"
        font_size = 0.03

        language = "german"
        left_key ="g"
        up_key = "r"
        right_key = "b"
        down_key = "y"

        allowed_keys = [left_key, up_key, right_key, down_key]

        fast_img_dur = 0.112 # [s]
        mask_dur = 0.048 # [s]
        fast_img_repetitions = 30
    CodeComponent set_trigger_numbers
      Code Type = Auto->JS
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      Begin Experiment:
        # define which trigger numbers to send
        trigger_numbers_dict = {
        "start/end": 255,
        "mask presentation": 200,
        "prompt_question": 150,
        "prompt_response": 151,

        "fixation cross ITI": 94,
        "break_start": 81,
        "break_end": 82
        }
    CodeComponent functions_imports
      Code Type = Auto->JS
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      Begin Experiment:
        # log function that saves variables to log file
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)


        import meg_triggers
        from meg_triggers import send_trigger
        meg_triggers.set_default_duration(0.005)
        meg_triggers.set_default_reset_value(0)  # set the value the trigger channel returns to for neutral state
        # meg_triggers.enable_printing()
    CodeComponent bids_logging_functions
      Code Type = Auto->JS
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      Begin Experiment:
        # --- BIDS event logger (no Builder BIDS components needed) ---
        from pathlib import Path
        import csv
        import numpy as np
        import atexit

        class BIDSLogger:
            def __init__(self, win, clock, default_cols=None):
                self.win = win
                self.clock = clock
                self.rows = []          # list of dicts -> will become events.tsv
                self.active = {}        # stim -> row index (for duration)
                self.defaults = default_cols or {}

                # fixed column order (add any you want to see in the TSV)
                self.col_order = [
                    "subject", "trial_num",
                    "component_label", "onset", "duration",
                    "type_of_stimulus",
                    "response_time", "response",
                    "expected_response",
                ]

            # schedule logging of onset on the *next* flip (exactly when the stim appears)
            def schedule_onset(self, stim, **extra_cols):
                 # Onset: first frame it is STARTED
                if getattr(stim, "status", None) == STARTED and stim not in self.active:
                    # Builder already records exact onset on flip into tStartRefresh;
                    # fall back to current clock if that isn't available.
                    t_on = getattr(stim, "tStartRefresh", None)
                    if t_on is None:
                        t_on = self.clock.getTime()
                    row = {
                        "onset": float(t_on),
                        "duration": np.nan,
                    }
                    row.update(self.defaults)
                    row.update(extra_cols)
                    self.rows.append(row)
                    self.active[stim] = len(self.rows) - 1

            # to log the offset and therefore compute durations of components
            def mark_offset(self, stim):
                if getattr(stim, "status", None) == FINISHED and stim in self.active:
                    idx = self.active.pop(stim)
                    t_off = getattr(stim, "tStopRefresh", None)
                    if t_off is None:
                        t_off = self.clock.getTime()
                    self.rows[idx]["duration"] = float(t_off - self.rows[idx]["onset"])

            # log a one-shot event right now (no duration), e.g., button press
            def add_instant(self, trial_type, **extra_cols):
                row = {"onset": float(self.clock.getTime()), "duration": 0.0,
                       "type_of_stimulus": trial_type}
                row.update(self.defaults)
                row.update(extra_cols)
                self.rows.append(row)

            # write out a BIDS-like events.tsv
            def save(self, filename_base):
                out = Path(filename_base).with_suffix("")  # strip .csv/.log if present
                out = out.parent / (out.name + "_events.tsv")

                # union of all keys, but keep preferred order first
                all_keys = list(self.col_order)
                for r in self.rows:
                    for k in r.keys():
                        if k not in all_keys:
                            all_keys.append(k)

                with open(out, "w", newline="", encoding="utf-8") as f:
                    w = csv.DictWriter(f, fieldnames=all_keys, delimiter="\t", extrasaction="ignore")
                    w.writeheader()
                    for r in self.rows:
                        # convert Nones to "n/a" for BIDS friendliness
                        out_row = {k: ("n/a" if (r.get(k) is None or (isinstance(r.get(k), float) and np.isnan(r.get(k)))) else r.get(k))
                                   for k in all_keys}
                        w.writerow(out_row)

                return str(out)
        # set global clock as default because we need it for timing
        bids = None

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        def _bids_autosave():
            try:
                if bids and hasattr(bids, "rows"):
                    out = bids.save(thisExp.dataFileName)
                    print(f"[autosave] BIDS events written to: {out}")
            except Exception as e:
                print(f"[autosave] Failed to save BIDS events: {e}")
      Begin Routine:
        # ---- Create the logger once ----
        bids = BIDSLogger(
            win=win,
            clock=globalClock,
            default_cols=dict(
                subject=expInfo.get("participant")
            )
        )

        # write a header-only file immediately so each start creates a file
        _ = bids.save(thisExp.dataFileName)

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        atexit.register(_bids_autosave)
    CodeComponent set_ppt_id
      Code Type = Auto->JS
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      Begin Routine:
        ppt_id = expInfo["participant"]
  Routine beginning_instruction
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    CodeComponent set_trigger_startexp
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(value=trigger_numbers_dict["start/end"])
    TextComponent instruction_begin
      font = $font_name
      letterHeight = font_size
      startVal [time (s)] = 0.0
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    CodeComponent set_instruction_begin
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_begin.text = (
            "You will now see image sequences in quick succession. "
            "Please focus on the screen. "
            "After each image sequence, you will have to answer a question about the sequence. "
            "This will only take a few minutes.\n"
            "[Press any key once your are ready.]"
            )
        if language == "french":
            instruction_begin.text = (
            "Vous allez maintenant voir des séquences d’images présentées en succession rapide. "
            "Veuillez rester concentré(e) sur l’écran. "
            "Après chaque séquence d’images, vous devrez répondre à une question concernant la séquence. "
            "Cela ne prendra que quelques minutes.\n"
            "[Appuyez sur une touche lorsque vous êtes prêt.]"
            )

        if language == "german":
            instruction_begin.text = (
            "Sie werden nun Bildsequenzen sehen, die in schneller Abfolge präsentiert werden. "
            "Bitte richten Sie Ihre Aufmerksamkeit auf den Bildschirm. "
            "Nach jeder Bildsequenz werden Sie eine Frage zur Sequenz beantworten. "
            "Es wird nur ein paar Minuten dauern.\n"
            "[Drücken Sie eine beliebige Taste, sobald Sie bereit sind.]"
            )
    CodeComponent bids_instruc_01
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting

        bids.schedule_onset(instruction_begin,
                                type_of_stimulus="instructions",
                                component_label="instruction_part1")
      End Routine:
        # log offset at last frame of routine

        bids.mark_offset(instruction_begin)
    KeyboardComponent continue_button
      allowedKeys = allowed_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine fixation
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    CodeComponent set_trigger_fix_cross
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(value=trigger_numbers_dict["fixation cross ITI"])
    TextComponent fix_cross
      font = font_name
      letterHeight = font_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent bids_fix_cross
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(fix_cross,
                                type_of_stimulus="fix_cross",
                                component_label="fix_cross_seq_begin",
        trial_num = fast_sequences_outer_loop.thisN)
      End Routine:
        bids.mark_offset(fix_cross)
  Routine question_fastseq
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    CodeComponent set_trigger_prompt_question
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(value=trigger_numbers_dict["prompt_question"])
    TextComponent question_fastseq_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent set_question_fastseq_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            question_fastseq_text.text = (
                "Which position did this image appear in? "
                "Use the left and right keys to move the slider, "
                "then press the upper (red) key to confirm your response.")
        elif language == "german":
            question_fastseq_text.text = (
                "An welcher Position ist dieses Bild erschienen? "
                "Bewegen Sie den Schieberegler mit der linken und rechten Taste "
                "und bestätigen Sie Ihre Antwort mit der oberen (roten) Taste.")
        elif language == "french":
            question_fastseq_text.text = (
                "À quelle position cette image est-elle apparue ? "
                "Déplacez le curseur avec les touches gauche et droite, "
                "puis appuyez sur la touche du haut (rouge) pour valider votre réponse.")
    KeyboardComponent key_resp_2
      allowedKeys = left_key, right_key, up_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent image_quest_fastseq
      image [set every repeat] = $prompt_image
      pos = (0, 0.15)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    CodeComponent bids_question_presentation
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(question_fastseq_text,
                                type_of_stimulus="probe_question_fast",
                                component_label="fast_question_pres",
        trial_num = fast_sequences_outer_loop.thisN)
      End Routine:
        bids.mark_offset(question_fastseq_text)
    CodeComponent slider_keys
      Code Type = Auto->JS
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      Begin Routine:
        slider_keys_done = 0
        slider_n_moves = 0
        fastseq_rt = None
        slider.markerPos = 3
      Each Frame:
        keys_now = key_resp_2.keys if isinstance(key_resp_2.keys, list) else []
        for i in range(slider_keys_done, len(keys_now)):
            key = keys_now[i]
            if key == left_key:
                slider.markerPos = max(1, slider.markerPos - 1)
                slider_n_moves += 1
            elif key == right_key:
                slider.markerPos = min(5, slider.markerPos + 1)
                slider_n_moves += 1
            elif key == up_key:
                fastseq_rt = key_resp_2.rt[i]                     # keyboard timestamp of the up press
                slider.recordRating(slider.markerPos, rt=fastseq_rt)
                continueRoutine = False
                break
        slider_keys_done = len(keys_now)
      End Routine:
        thisExp.addData('fastseq_response', slider.getRating())
        thisExp.addData('fastseq_rt', fastseq_rt)
        thisExp.addData('fastseq_correct', int(slider.getRating() == probe_position))
        thisExp.addData('fastseq_n_moves', slider_n_moves)
    SliderComponent slider
      fillColor = Black
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      initVal = 3
      labels = (1,2,3,4,5)
      letterHeight = 0.04
      pos = (0, -0.1)
      readOnly = True
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent set_trigger_prompt_response
      Code Type = Auto->JS
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      Begin Routine:
        key_resp_2.keys = None
        response_trigger_sent = False
      Each Frame:
        if slider.getRating() is not None and not response_trigger_sent:
            send_trigger(value=trigger_numbers_dict["prompt_response"])
            response_trigger_sent = True
    CodeComponent bids_fastseq_response
      Code Type = Auto->JS
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      End Routine:
        if slider.getRating() is not None:
            bids.add_instant(
            "fastseq_resp",
            #trial_type = "fast_seq",
            trial_num=fast_sequences_outer_loop.thisN,
            response=(slider.getRating() if slider.getRating() is not None else "m"),
            response_time=(fastseq_rt if fastseq_rt is not None else None),
            correct=(int(probe_position)==slider.getRating()),
            expected_response = probe_position,
        component_label="slider_login"
        )
  Routine fast_seq_image
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    CodeComponent set_images_this_seq
      Code Type = Auto->JS
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      Begin Routine:
        k = fast_images_loop.thisN
        img_file = [fast_img_1, fast_img_2, fast_img_3, fast_img_4, fast_img_5][k]
        image_num_trg = [image_num_trg_1, image_num_trg_2, image_num_trg_3, image_num_trg_4, image_num_trg_5][k]
    CodeComponent set_trigger_image
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(value=image_num_trg)
    ImageComponent image
      image [set every repeat] = $img_file
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fast_img_dur
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    CodeComponent bids_image
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(image,
                                type_of_stimulus="image_fast",
                                component_label="fast_img_pres",
        trial_num = fast_sequences_outer_loop.thisN)
      End Routine:
        bids.mark_offset(image)
  Routine fast_seq_mask
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    CodeComponent set_mask_this_seq
      Code Type = Auto->JS
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      Begin Routine:
        mask_file = [mask_img_1, mask_img_2, mask_img_3, mask_img_4, mask_img_5][fast_images_loop.thisN]
    CodeComponent set_trigger_mask
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(value=trigger_numbers_dict["mask presentation"])
    ImageComponent mask_image
      image [set every repeat] = $mask_file
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = mask_dur
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    CodeComponent bids_mask
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(mask_image,
                                type_of_stimulus="mask_fast",
                                component_label="fast_mask_pres",
        trial_num = fast_sequences_outer_loop.thisN)
      End Routine:
        bids.mark_offset(mask_image)
  Routine end_instruction
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    CodeComponent set_trigger_end
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(value=trigger_numbers_dict["start/end"])
    CodeComponent bids_instruc_7
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part7,
                                type_of_stimulus="instructions",
                                component_label="instruction_part7")
      End Routine:
        bids.mark_offset(instruction_part7)
    TextComponent instruction_part7
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part7_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part7.text = (
            "You finished the last task block. Good job!\n"
            "Press any key to end this part of the experiment. "
            )

        if language == "german":
            instruction_part7.text = (
            "Sie haben den letzten Aufgabenblock abgeschlossen. Gut gemacht!\n"
            "Drücken Sie eine beliebige Taste, um diesen Teil des Experiments zu beenden." )

        if language == "french":
            instruction_part7.text = (
            "Vous avez terminé la dernière partie des exercices. Bravo!\n"
            "Appuyez sur une touche pour terminer cette partie de l'expérience. "
        )
    KeyboardComponent continue_button_8
      allowedKeys = allowed_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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Flow
  Routine exp_settings
  Routine beginning_instruction
  LoopInitiator fast_sequences_outer_loop loopType="TrialHandler"
    conditionsFile = $f"sequences/fastseq_conditions_{ppt_id}.xlsx"
    loopType = sequential
    nReps = 1
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    conditions:
      [{'fs_trial': 1, 'fs_sequence': 'A', 'fs_rep_in_seq': 1, 'inner_file': 'sequences_new/fastseq_inner_64.xlsx', 'inner_rows': '0,1,2,3,4', 'fast_img_1': 'stimuli/bread/bread_17.jpg', 'fast_img_2': 'stimuli/dog/dog_08.jpg', 'fast_img_3': 'stimuli/chair/chair_16.jpg', 'fast_img_4': 'stimuli/hammer/hammer_35.jpg', 'fast_img_5': 'stimuli/flower/flower_42.jpg', 'fast_trig_1': 3, 'fast_trig_2': 5, 'fast_trig_3': 4, 'fast_trig_4': 7, 'fast_trig_5': 6, 'fast_seqpos_1': 12, 'fast_seqpos_2': 5, 'fast_seqpos_3': 4, 'fast_seqpos_4': 7, 'fast_seqpos_5': 3, 'image_num_trg_1': 3, 'image_num_trg_2': 5, 'image_n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,
      {'fs_trial': 2, 'fs_sequence': 'B', 'fs_rep_in_seq': 1, 'inner_file': 'sequences_new/fastseq_inner_64.xlsx', 'inner_rows': '5,6,7,8,9', 'fast_img_1': 'stimuli/hammer/hammer_45.jpg', 'fast_img_2': 'stimuli/ball/ball_20.jpg', 'fast_img_3': 'stimuli/bread/bread_32.jpg', 'fast_img_4': 'stimuli/house/house_46.jpg', 'fast_img_5': 'stimuli/flower/flower_44.jpg', 'fast_trig_1': 7, 'fast_trig_2': 1, 'fast_trig_3': 3, 'fast_trig_4': 9, 'fast_trig_5': 6, 'fast_seqpos_1': 5, 'fast_seqpos_2': 8, 'fast_seqpos_3': 6, 'fast_seqpos_4': 4, 'fast_seqpos_5': 3, 'image_num_trg_1': 7, 'image_num_trg_2': 1, 'image_n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,
      {'fs_trial': 3, 'fs_sequence': 'D', 'fs_rep_in_seq': 1, 'inner_file': 'sequences_new/fastseq_inner_64.xlsx', 'inner_rows': '10,11,12,13,14', 'fast_img_1': 'stimuli/jacket/jacket_46.jpg', 'fast_img_2': 'stimuli/ball/ball_18.jpg', 'fast_img_3': 'stimuli/bread/bread_12.jpg', 'fast_img_4': 'stimuli/chair/chair_33.jpg', 'fast_img_5': 'stimuli/house/house_29.jpg', 'fast_trig_1': 10, 'fast_trig_2': 1, 'fast_trig_3': 3, 'fast_trig_4': 4, 'fast_trig_5': 9, 'fast_seqpos_1': 8, 'fast_seqpos_2': 3, 'fast_seqpos_3': 6, 'fast_seqpos_4': 10, 'fast_seqpos_5': 4, 'image_num_trg_1': 10, 'image_num_trg_2': 1, 'i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,
      {'fs_trial': 4, 'fs_sequence': 'B', 'fs_rep_in_seq': 2, 'inner_file': 'sequences_new/fastseq_inner_64.xlsx', 'inner_rows': '15,16,17,18,19', 'fast_img_1': 'stimuli/hand/hand_27.jpg', 'fast_img_2': 'stimuli/dog/dog_07.jpg', 'fast_img_3': 'stimuli/chair/chair_06.jpg', 'fast_img_4': 'stimuli/hammer/hammer_45.jpg', 'fast_img_5': 'stimuli/flower/flower_44.jpg', 'fast_trig_1': 8, 'fast_trig_2': 5, 'fast_trig_3': 4, 'fast_trig_4': 7, 'fast_trig_5': 6, 'fast_seqpos_1': 7, 'fast_seqpos_2': 12, 'fast_seqpos_3': 9, 'fast_seqpos_4': 5, 'fast_seqpos_5': 3, 'image_num_trg_1': 8, 'image_num_trg_2': 5, 'image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
    Routine fixation
    LoopInitiator fast_images_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      conditions:
        [{'fs_trial_inner': 1, 'img_slot': 1, 'img_file': 'stimuli/bread/bread_17.jpg', 'img_concept': 'bread', 'image_num_trg': 3, 'img_trig': 3, 'img_seqpos': 12, 'mask_file': 'stimuli/mask_images/mask_03.png'},
        {'fs_trial_inner': 1, 'img_slot': 2, 'img_file': 'stimuli/dog/dog_08.jpg', 'img_concept': 'dog', 'image_num_trg': 5, 'img_trig': 5, 'img_seqpos': 5, 'mask_file': 'stimuli/mask_images/mask_02.png'},
        {'fs_trial_inner': 1, 'img_slot': 3, 'img_file': 'stimuli/chair/chair_16.jpg', 'img_concept': 'chair', 'image_num_trg': 4, 'img_trig': 4, 'img_seqpos': 4, 'mask_file': 'stimuli/mask_images/mask_00.png'},
        {'fs_trial_inner': 1, 'img_slot': 4, 'img_file': 'stimuli/hammer/hammer_35.jpg', 'img_concept': 'hammer', 'image_num_trg': 7, 'img_trig': 7, 'img_seqpos': 7, 'mask_file': 'stimuli/mask_images/mask_04.png'},
        {'fs_trial_inner': 1, 'img_slot': 5, 'img_file': 'stimuli/flower/flower_42.jpg', 'img_concept': 'flower', 'image_num_trg': 6, 'img_trig': 6, 'img_seqpos': 3, 'mask_file': 'stimuli/mask_images/mask_01.png'},
        {'fs_trial_inner': 2, 'img_slot': 1, 'img_file': 'stimuli/hammer/hammer_45.jpg', 'img_concept': 'hammer', 'image_num_trg': 7, 'img_trig': 7, 'img_seqpos': 5, 'mask_file': 'stimuli/mask_images/mask_02.png'},
        {'fs_trial_inner': 2, 'img_slot': 2, 'img_file': 'stimuli/ball/ball_20.jpg', 'img_concept': 'ball', 'image_num_trg': 1, 'img_trig': 1, 'img_seqpos': 8, 'mask_file': 'stimuli/mask_images/mask_03.png'}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
      Routine fast_seq_image
      Routine fast_seq_mask
    LoopTerminator fast_images_loop
    Routine question_fastseq
  LoopTerminator fast_sequences_outer_loop
  Routine end_instruction
