PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Completed URL = $"https://run.pavlovia.org/sianna/tsrlearn_questionnaires/?ORSEE_ID="+expInfo['ORSEE_ID']
  Data file delimiter = tab
  Data filename = "data/" + expInfo['participant_ID'] + "_" + expName + "_" + expInfo['date']
  Experiment info = {'participant_ID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['sequences/block_conditions.xlsx', 'sequences/learning_blockA_fixed-middle-10_00.xlsx', 'sequences/learning_blockA_fixed-middle-10_01.xlsx', 'sequences/learning_blockA_fixed-middle-10_02.xlsx', 'sequences/learning_blockA_fixed-middle-10_03.xlsx', 'sequences/learning_blockA_fixed-middle-10_04.xlsx', 'sequences/learning_blockA_fixed-middle-10_05.xlsx', 'sequences/learning_blockA_fixed-middle-10_06.xlsx', 'sequences/learning_blockA_fixed-middle-10_07.xlsx', 'sequences/learning_blockA_fixed-middle-10_08.xlsx', 'sequences/learning_blockA_fixed-middle-10_09.xlsx', 'sequences/learning_blockA_fixed-middle-10_10.xlsx', 'sequences/learning_blockA_fixed-middle-10_11.xlsx', 'sequences/learning_blockA_fixed-middle-10_12.xlsx', 'sequences/learning_blockA_fixed-middle-10_13.xlsx', 'sequences/learning_blockA_fixed-middle-10_14.xlsx', 'sequences/learning_blockA_fixed-middle-10_15.xlsx', 'sequences/learning_blockA_fixed-middle-10_16.xlsx', 'sequences/learning_blockA_fixed-middle-10_17.xlsx', 'sequences/learning_blockA_fixed-middle-10_18.xlsx', 'sequences/learning_blockA_fixed-middle-10_19.xlsx', 'sequences/learning_blockA_fixed-middle-10_20.xlsx', 'sequences/learning_blockA_fixed-middle-10_21.xlsx', 'sequences/learning_blockA_fixed-middle-10_22.xlsx', 'sequences/learning_blockA_fixed-middle-10_23.xlsx', 'sequences/learning_blockA_fixed-middle-10_24.xlsx', 'sequences/learning_blockA_fixed-middle-10_25.xlsx', 'sequences/learning_blockA_fixed-middle-10_26.xlsx', 'sequences/learning_blockA_fixed-middle-10_27.xlsx', 'sequences/learning_blockA_fixed-middle-10_28.xlsx', 'sequences/learning_blockA_fixed-middle-10_29.xlsx', 'sequences/learning_blockA_fixed-middle-10_30.xlsx', 'sequences/learning_blockA_fixed-middle-10_31.xlsx', 'sequences/learning_blockA_fixed-middle-10_32.xlsx', 'sequences/learning_blockA_fixed-middle-10_33.xlsx', 'sequences/learning_blockA_fixed-middle-10_34.xlsx', 'sequences/learning_blockA_fixed-middle-10_35.xlsx', 'sequences/learning_blockA_fixed-middle-10_36.xlsx', 'sequences/learning_blockA_fixed-middle-10_37.xlsx', 'sequences/learning_blockA_fixed-middle-10_38.xlsx', 'sequences/learning_blockA_fixed-middle-10_39.xlsx', 'sequences/learning_blockA_fixed-middle-10_40.xlsx', 'sequences/learning_blockA_fixed-middle-10_41.xlsx', 'sequences/learning_blockA_fixed-middle-10_42.xlsx', 'sequences/learning_blockA_fixed-middle-10_43.xlsx', 'sequences/learning_blockA_fixed-middle-10_44.xlsx', 'sequences/learning_blockA_fixed-middle-10_45.xlsx', 'sequences/learning_blockA_fixed-middle-10_46.xlsx', 'sequences/learning_blockA_fixed-middle-10_47.xlsx', 'sequences/learning_blockA_fixed-middle-10_48.xlsx', 'sequences/learning_blockA_fixed-middle-10_49.xlsx', 'sequences/learning_blockA_fixed-middle-10_50.xlsx', 'sequences/learning_blockA_fixed-middle-10_51.xlsx', 'sequences/learning_blockA_fixed-middle-10_52.xlsx', 'sequences/learning_blockA_fixed-middle-10_53.xlsx', 'sequences/learning_blockA_fixed-middle-10_54.xlsx', 'sequences/learning_blockA_fixed-middle-10_55.xlsx', 'sequences/learning_blockA_fixed-middle-10_56.xlsx', 'sequences/learning_blockA_fixed-middle-10_57.xlsx', 'sequences/learning_blockA_fixed-middle-10_58.xlsx', 'sequences/learning_blockA_fixed-middle-10_59.xlsx', 'sequences/learning_blockA_fixed-middle-10_60.xlsx', 'sequences/learning_blockA_fixed-middle-10_61.xlsx', 'sequences/learning_blockA_fixed-middle-10_62.xlsx', 'sequences/learning_blockA_fixed-middle-10_63.xlsx', 'sequences/learning_blockA_fixed-middle-10_64.xlsx', 'sequences/learning_blockA_fixed-middle-10_65.xlsx', 'sequences/learning_blockA_fixed-middle-10_66.xlsx', 'sequences/learning_blockA_fixed-middle-10_67.xlsx', 'sequences/learning_blockA_fixed-middle-10_68.xlsx', 'sequences/learning_blockA_fixed-middle-10_69.xlsx', 'sequences/learning_blockB_fixed-middle-10_00.xlsx', 'sequences/learning_blockB_fixed-middle-10_01.xlsx', 'sequences/learning_blockB_fixed-middle-10_02.xlsx', 'sequences/learning_blockB_fixed-middle-10_03.xlsx', 'sequences/learning_blockB_fixed-middle-10_04.xlsx', 'sequences/learning_blockB_fixed-middle-10_05.xlsx', 'sequences/learning_blockB_fixed-middle-10_06.xlsx', 'sequences/learning_blockB_fixed-middle-10_07.xlsx', 'sequences/learning_blockB_fixed-middle-10_08.xlsx', 'sequences/learning_blockB_fixed-middle-10_09.xlsx', 'sequences/learning_blockB_fixed-middle-10_10.xlsx', 'sequences/learning_blockB_fixed-middle-10_11.xlsx', 'sequences/learning_blockB_fixed-middle-10_12.xlsx', 'sequences/learning_blockB_fixed-middle-10_13.xlsx', 'sequences/learning_blockB_fixed-middle-10_14.xlsx', 'sequences/learning_blockB_fixed-middle-10_15.xlsx', 'sequences/learning_blockB_fixed-middle-10_16.xlsx', 'sequences/learning_blockB_fixed-middle-10_17.xlsx', 'sequences/learning_blockB_fixed-middle-10_18.xlsx', 'sequences/learning_blockB_fixed-middle-10_19.xlsx', 'sequences/learning_blockB_fixed-middle-10_20.xlsx', 'sequences/learning_blockB_fixed-middle-10_21.xlsx', 'sequences/learning_blockB_fixed-middle-10_22.xlsx', 'sequences/learning_blockB_fixed-middle-10_23.xlsx', 'sequences/learning_blockB_fixed-middle-10_24.xlsx', 'sequences/learning_blockB_fixed-middle-10_25.xlsx', 'sequences/learning_blockB_fixed-middle-10_26.xlsx', 'sequences/learning_blockB_fixed-middle-10_27.xlsx', 'sequences/learning_blockB_fixed-middle-10_28.xlsx', 'sequences/learning_blockB_fixed-middle-10_29.xlsx', 'sequences/learning_blockB_fixed-middle-10_30.xlsx', 'sequences/learning_blockB_fixed-middle-10_31.xlsx', 'sequences/learning_blockB_fixed-middle-10_32.xlsx', 'sequences/learning_blockB_fixed-middle-10_33.xlsx', 'sequences/learning_blockB_fixed-middle-10_34.xlsx', 'sequences/learning_blockB_fixed-middle-10_35.xlsx', 'sequences/learning_blockB_fixed-middle-10_36.xlsx', 'sequences/learning_blockB_fixed-middle-10_37.xlsx', 'sequences/learning_blockB_fixed-middle-10_38.xlsx', 'sequences/learning_blockB_fixed-middle-10_39.xlsx', 'sequences/learning_blockB_fixed-middle-10_40.xlsx', 'sequences/learning_blockB_fixed-middle-10_41.xlsx', 'sequences/learning_blockB_fixed-middle-10_42.xlsx', 'sequences/learning_blockB_fixed-middle-10_43.xlsx', 'sequences/learning_blockB_fixed-middle-10_44.xlsx', 'sequences/learning_blockB_fixed-middle-10_45.xlsx', 'sequences/learning_blockB_fixed-middle-10_46.xlsx', 'sequences/learning_blockB_fixed-middle-10_47.xlsx', 'sequences/learning_blockB_fixed-middle-10_48.xlsx', 'sequences/learning_blockB_fixed-middle-10_49.xlsx', 'sequences/learning_blockB_fixed-middle-10_50.xlsx', 'sequences/learning_blockB_fixed-middle-10_51.xlsx', 'sequences/learning_blockB_fixed-middle-10_52.xlsx', 'sequences/learning_blockB_fixed-middle-10_53.xlsx', 'sequences/learning_blockB_fixed-middle-10_54.xlsx', 'sequences/learning_blockB_fixed-middle-10_55.xlsx', 'sequences/learning_blockB_fixed-middle-10_56.xlsx', 'sequences/learning_blockB_fixed-middle-10_57.xlsx', 'sequences/learning_blockB_fixed-middle-10_58.xlsx', 'sequences/learning_blockB_fixed-middle-10_59.xlsx', 'sequences/learning_blockB_fixed-middle-10_60.xlsx', 'sequences/learning_blockB_fixed-middle-10_61.xlsx', 'sequences/learning_blockB_fixed-middle-10_62.xlsx', 'sequences/learning_blockB_fixed-middle-10_63.xlsx', 'sequences/learning_blockB_fixed-middle-10_64.xlsx', 'sequences/learning_blockB_fixed-middle-10_65.xlsx', 'sequences/learning_blockB_fixed-middle-10_66.xlsx', 'sequences/learning_blockB_fixed-middle-10_67.xlsx', 'sequences/learning_blockB_fixed-middle-10_68.xlsx', 'sequences/learning_blockB_fixed-middle-10_69.xlsx', 'sequences/main_trials_prc.xlsx', 'sequences/retr_trials_prc.xlsx', 'sequences/retr_trials_prc_01.xlsx', 'sequences/retr_trials_prc_02.xlsx', 'sequences/retr_trials_prc_03.xlsx', 'sequences/retr_trials_prc_overview.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_00.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_01.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_02.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_03.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_04.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_05.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_06.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_07.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_08.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_09.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_10.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_11.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_12.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_13.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_14.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_15.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_16.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_17.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_18.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_19.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_20.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_21.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_22.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_23.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_24.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_25.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_26.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_27.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_28.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_29.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_30.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_31.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_32.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_33.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_34.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_35.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_36.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_37.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_38.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_39.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_40.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_41.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_42.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_43.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_44.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_45.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_46.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_47.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_48.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_49.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_50.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_51.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_52.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_53.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_54.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_55.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_56.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_57.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_58.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_59.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_60.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_61.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_62.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_63.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_64.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_65.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_66.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_67.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_68.xlsx', 'sequences/retrieval_blockA_fixed-middle-10_69.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_00.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_01.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_02.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_03.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_04.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_05.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_06.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_07.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_08.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_09.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_10.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_11.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_12.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_13.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_14.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_15.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_16.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_17.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_18.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_19.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_20.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_21.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_22.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_23.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_24.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_25.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_26.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_27.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_28.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_29.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_30.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_31.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_32.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_33.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_34.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_35.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_36.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_37.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_38.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_39.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_40.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_41.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_42.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_43.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_44.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_45.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_46.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_47.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_48.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_49.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_50.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_51.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_52.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_53.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_54.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_55.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_56.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_57.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_58.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_59.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_60.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_61.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_62.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_63.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_64.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_65.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_66.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_67.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_68.xlsx', 'sequences/retrieval_blockB_fixed-middle-10_69.xlsx', 'sequences/trivia_questions_Block1.xlsx', 'sequences/trivia_questions_Block2.xlsx', 'stimuli/practice_images', 'sequences/block_conditions.xlsx', 'stimuli/default.png']
  Screen = 1
  Units = height
  Use version = 2025.1
  Window size (pixels) = [1536, 864]
  blendMode = nofbo
  color = 0.3255, 0.3255, 0.3255
  expName = TSRlearn_main-blocks
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine startup_settings
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    CodeComponent import_packages
      Code Type = Py
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      Begin Experiment:
        from pathlib import Path
        import csv
        import numpy as np
        import atexit
        import random
    CodeComponent function_definitions
      Code Type = Py
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      Begin Experiment:
        # log function that saves when task events happen to log file
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)

        # function for setting triggers when comps appear
        # def send_onset_trigger(stim, trig_number):
            #record exact onset on the global clock
            # win.timeOnFlip(stim, 'tStartRefresh')
            #send_trigger(trig_number)

        import meg_triggers
        from meg_triggers import send_trigger
        meg_triggers.set_default_duration(0.005)
        meg_triggers.set_default_reset_value(0)  # set the value the trigger channel returns to for neutral state
        # meg_triggers.enable_printing()

        from ast import literal_eval
        # function that matches position keywords to position (x,y - coord) tuples
        def resolve_pos(val):
            """Return a (x,y) tuple from various spreadsheet formats."""
            #Already a tuple/list/ndarray -> normalize to tuple
            if isinstance(val, (list, tuple, np.ndarray)):
                return tuple(val)
            # Name like "left_pos" -> look up
            if isinstance(val, str):
                name = val.strip()
                if name in POS:
                    return POS[name]
                # Or literal like "(-0.4, 0.2)" in the cell
                try:
                    parsed = literal_eval(name)
                    if isinstance(parsed, (list, tuple)) and len(parsed) == 2:
                        return tuple(parsed)
                except Exception:
                    pass
                    raise ValueError(f"Unrecognized position value: {val!r}")
                    raise TypeError(f"Unsupported position type: {type(val)}")
    CodeComponent exp_settings
      Code Type = Py
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      Begin Experiment:
        ## set main experimental variables

        # set exp ppt id
        participant_ID = expInfo['participant_ID']

        # instruction language
        language = "german" # "french" or "english"
        font_name = "Sans Sherif"

        # "Left" "right" etc. are the arrow keys on the key board
        # these are the keys for selecting the images in different positions
        left_key = "g"
        center_key = "r"
        right_key = "b"
        down_key = "y"

        # pos of images (x-coord, y-coord)
        #left_pos   = (-0.2, 0.1)
        #right_pos  = (0.2, 0.1)
        #center_pos = (0.0, 0.1)
        prompt_pos = (0, -0.15)

        # pos on retrieval trials
        leftside_retr = (-0.05,0)
        rightside_retr = (0.05,0)

        # pos of instructions to choose the next image
        instruc_pos = (0,0.2)

        # response time on learning trials
        max_response_time = 5 # [s]

        # feedback on learning trials
        feedback_steps  =  0.06   # steps out of 1 (percent)
        rest_jump       =  0.004 # abs distance to target pos
        animation_time   = 1    # [s]

        # breaks (indicate after which learning route you want task break)
        break_after_route = 4
        break_dur = 30 # [s]

        # replay breaks during learning
        replay_break_dur = 5
        trials_per_run = 13 # after 13 trials because we have 14 image sequences

        after_block_restdur = 60
        max_durafter_block_break = 180

        # number of learning runs
        # one run is 13 trials (learn 14-image sequence in pairs)
        n_learn_route = 4

        # duration of response time on retrieval trials
        retr_dur = 3 # [s]

        # too slow message duration
        too_slow_dur = 0.5 # [s]

        retr_dur_slider = 3 # [s] response time on retrieval questions with slider
        instr_newroute_dur = 1 # [s]
        image_dur_retr_new = 1
        #fix_dur_retr = 0.5 are defined in condition file

        # timing for fast image presentations at the end
        fast_img_dur = 0.075 # [s]
        mask_dur = 0.05 # [s]

        max_read_dur = 180;

        # default context image
        context_img_block = "stimuli/default.png"
    CodeComponent bids_logging_functions
      Code Type = Py
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      Begin Experiment:
        # --- BIDS event logger with trigger logging (TSRlearn_main-blocks) ---
        # Drop-in replacement for the 'Begin Experiment' code of `bids_logging_functions`.
        #
        # Time base: globalClock, the same clock win.getFutureFlipTime(clock=None) uses,
        # so tStartRefresh and trigger timestamps are directly comparable.
        # Onsets are relative to t0 (logger creation), so they start near 0.
        #
        # NOTE: do NOT import STARTED / FINISHED / core here. Builder pastes this block
        # inside run(), so an import would make those names local to run() and break
        # `thisExp.status = STARTED` at the top of the function (UnboundLocalError).
        # Path / csv / numpy / atexit are already imported by `import_packages`.


        class BIDSLogger:
            def __init__(self, win, clock, default_cols=None,
                         send_fn=None, log_trigger_rows=True):
                """
                win              : the PsychoPy window (needed for callOnFlip)
                clock            : globalClock - MUST be the clock the window uses
                send_fn          : meg_triggers.send_trigger
                log_trigger_rows : if True, every trigger also gets its own row
                """
                self.win = win
                self.clock = clock
                self.send_fn = send_fn
                self.log_trigger_rows = log_trigger_rows

                self.rows = []
                self.active = {}      # stim -> row index (open, awaiting offset)
                self.pending = {}     # stim -> trigger fired before its row existed
                self.defaults = default_cols or {}
                if clock is None:
                    raise ValueError("BIDSLogger needs globalClock, otherwise onsets "
                                     "and triggers end up on different time bases.")
                self.t0 = self.now()

                self.col_order = [
                    "subject", "trial_type", "block_name", "sequence_name",
                    "route_num",
                    "trial_num",
                    "component_label",
                    "concept_label", "concept_exemplar",
                    "onset", "duration",
                    "type_of_stimulus",
                    "trigger_value", "trigger_onset", "trigger_delay",
                    "response_time", "press_onset_est", "response",
                    "response_meaning", "expected_response",
                    "correct", "distance_correct",
                ]

            # ------------------------------------------------------------ timing --
            def now(self):
                """Current time on the SAME clock as tStartRefresh."""
                return float(self.clock.getTime(format='float'))

            def _rel(self, t):
                return float(t - self.t0)

            # ------------------------------------------------------- stimulus log --
            def schedule_onset(self, stim, **extra_cols):
                """Call every frame; logs on the first frame the stim is STARTED."""
                if getattr(stim, "status", None) == STARTED and stim not in self.active:
                    t_on = getattr(stim, "tStartRefresh", None)
                    if t_on is None:
                        t_on = self.now()

                    row = {"onset": self._rel(t_on), "duration": np.nan}
                    row.update(self.defaults)
                    row.update(extra_cols)

                    trig = self.pending.pop(stim, None)
                    if trig is not None:
                        self._attach_trigger(row, trig["value"], trig["t"])

                    self.rows.append(row)
                    self.active[stim] = len(self.rows) - 1

            def mark_offset(self, stim):
                """Call in End Routine; closes the row and computes duration."""
                if getattr(stim, "status", None) == FINISHED and stim in self.active:
                    idx = self.active.pop(stim)
                    t_off = getattr(stim, "tStopRefresh", None)
                    if t_off is None:
                        t_off = self.now()
                    self.rows[idx]["duration"] = self._rel(t_off) - self.rows[idx]["onset"]
                else:
                    # never finished cleanly - free it so the next trial can reopen it
                    self.active.pop(stim, None)

            def close_trial(self):
                """
                Call at the end of each trial. Components that never reach FINISHED
                (routine ended early by a response or animation) would otherwise stay
                in `active` forever and every later schedule_onset() for them would be
                silently skipped.
                """
                t_now = self.now()
                for stim, idx in list(self.active.items()):
                    if np.isnan(self.rows[idx].get("duration", np.nan)):
                        self.rows[idx]["duration"] = self._rel(t_now) - self.rows[idx]["onset"]
                        self.rows[idx]["truncated"] = 1
                self.active.clear()
                self.pending.clear()

            def add_instant(self, given_name, onset=None, **extra_cols):
                """
                One-shot event with no duration, e.g. a button press.

                onset : absolute time on self.clock. Pass this for anything logged
                        later than it happened.
                """
                t = self.now() if onset is None else float(onset)
                row = {"onset": self._rel(t), "duration": 0.0,
                       "type_of_stimulus": given_name}
                row.update(self.defaults)
                row.update(extra_cols)
                self.rows.append(row)

            # -------------------------------------------------------- trigger log --
            def trigger(self, value, stim=None, label=None, on_flip=True, **extra):
                """
                Send a trigger and log when it was sent.

                stim     : link the trigger to this stimulus's row, adding
                           trigger_value / trigger_onset / trigger_delay to it
                label    : component_label for the standalone trigger row
                on_flip  : True  -> fire via win.callOnFlip, i.e. immediately after the
                                    buffer swap. Use for anything screen-locked.
                           False -> fire right now. Use for responses and for triggers
                                    at the very end of a routine.
                """
                value = int(value)

                def _fire():
                    t = self.now()                     # timestamp before the send
                    try:
                        if self.send_fn is not None:
                            self.send_fn(value)
                    except Exception as e:
                        # never let a port error swallow the remaining flip callbacks
                        # (clock.reset / clearEvents are registered on the same flip)
                        print(f"[trigger] send failed for {value}: {e}")
                    self._record_trigger(value, t, stim=stim, label=label, **extra)

                if on_flip and self.win is not None:
                    self.win.callOnFlip(_fire)
                else:
                    _fire()

            def _attach_trigger(self, row, value, t_abs):
                row["trigger_value"] = value
                row["trigger_onset"] = self._rel(t_abs)
                row["trigger_delay"] = row["trigger_onset"] - row["onset"]

            def _record_trigger(self, value, t_abs, stim=None, label=None, **extra):
                if stim is not None:
                    if stim in self.active:
                        self._attach_trigger(self.rows[self.active[stim]], value, t_abs)
                    else:
                        self.pending[stim] = {"value": value, "t": t_abs}

                if self.log_trigger_rows:
                    row = {"onset": self._rel(t_abs), "duration": 0.0,
                           "type_of_stimulus": "trigger",
                           "component_label": label or "trigger",
                           "trigger_value": value}
                    row.update(self.defaults)
                    row.update(extra)
                    self.rows.append(row)

            # -------------------------------------------------------------- output --
            def save(self, filename_base):
                out = Path(filename_base).with_suffix("")
                out = out.parent / (out.name + "_events.tsv")

                all_keys = list(self.col_order)
                for r in self.rows:
                    for k in r.keys():
                        if k not in all_keys:
                            all_keys.append(k)

                # BIDS requires onset-sorted rows; sort a copy so live indices stay valid
                rows_sorted = sorted(self.rows, key=lambda r: r.get("onset", 0.0))

                with open(out, "w", newline="", encoding="utf-8") as f:
                    w = csv.DictWriter(f, fieldnames=all_keys, delimiter="\t",
                                       extrasaction="ignore")
                    w.writeheader()
                    for r in rows_sorted:
                        out_row = {}
                        for k in all_keys:
                            v = r.get(k)
                            if v is None or (isinstance(v, float) and np.isnan(v)):
                                out_row[k] = "n/a"
                            else:
                                out_row[k] = v
                        w.writerow(out_row)

                return str(out)

            def trigger_report(self):
                """Console summary of stimulus-to-trigger delays, per label."""
                from collections import defaultdict
                by_label = defaultdict(list)
                for r in self.rows:
                    if (r.get("trigger_delay") is not None
                            and r.get("type_of_stimulus") != "trigger"):
                        by_label[r.get("component_label", "?")].append(
                            r["trigger_delay"] * 1000)
                lines = []
                for lab, d in sorted(by_label.items()):
                    d = np.asarray(d)
                    lines.append(f"{lab:>24s}  n={len(d):4d}  "
                                 f"median={np.median(d):7.3f} ms  "
                                 f"IQR=[{np.percentile(d,25):.3f}, {np.percentile(d,75):.3f}]  "
                                 f"max={d.max():7.3f}")
                return "\n".join(lines) if lines else "no linked triggers logged"


        bids = None


        def _bids_autosave():
            try:
                if bids and hasattr(bids, "rows"):
                    out = bids.save(thisExp.dataFileName)
                    print(f"[autosave] BIDS events written to: {out}")
                    print(bids.trigger_report())
            except Exception as e:
                print(f"[autosave] Failed to save BIDS events: {e}")
      Begin Routine:
        # Create the logger once
        bids = BIDSLogger(
            win=win,
            clock=globalClock,
            send_fn=send_trigger,
            default_cols=dict(subject=expInfo.get("participant_ID"))
        )

        # write a header-only file immediately so each start creates a file
        _ = bids.save(thisExp.dataFileName)

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        atexit.register(_bids_autosave)
    CodeComponent refine_positions
      Code Type = Py
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      Begin Routine:
        # make coordinates match with position description in excel file
        POS = {
            'left':   left_pos,
            'center': center_pos,
            'right':  right_pos
        }

        # Map positions to keys
        # (just so it's easier to access later)
        posToKey = {
            right_pos: right_key,
            center_pos: center_key,
            left_pos: left_key
        }
    CodeComponent function_definitions_js
      Code Type = JS
      disabled = True
      Begin JS Experiment:
        /**
         * Return an [x, y] pair from various spreadsheet formats.
         *
         * Supported inputs:
         *  - [x, y] array
         *  - keyword string that exists in POS (e.g., "left_pos")
         *  - string literal like "(-0.4, 0.2)", "[-0.4, 0.2]", "-0.4, 0.2"
         *
         * @param {any} val
         * @param {Record<string, [number, number]>} POS
         * @returns {[number, number]}
         */
        window.resolve_pos = function(val, POS) {
          // Already an array -> normalize to [x, y]
          if (Array.isArray(val)) {
            if (val.length !== 2) {
              throw new TypeError(`Position array must have length 2, got ${val.length}`);
            }
            return [Number(val[0]), Number(val[1])];
          }

          // Name like "left_pos" -> look up, or parse a literal string
          if (typeof val === "string") {
            const name = val.trim();

            if (Object.prototype.hasOwnProperty.call(POS, name)) {
              return POS[name];
            }

            // Parse literals like "(-0.4, 0.2)" or "[-0.4, 0.2]" or "-0.4, 0.2"
            const parsed = parseXYLiteral(name);
            if (parsed) return parsed;

            throw new Error(`Unrecognized position value: ${JSON.stringify(val)}`);
          }

          throw new TypeError(`Unsupported position type: ${Object.prototype.toString.call(val)}`);
        }



        /**
         * Parse a simple "(x, y)" / "[x, y]" / "x, y" string into [x, y].
         * Returns null if it doesn't match.
         *
         * @param {string} s
         * @returns {[number, number] | null}
         */
        function parseXYLiteral(s) {
          // Remove surrounding brackets/parens if present
          let t = s.trim();

          // Allow surrounding () or []
          if (
            (t.startsWith("(") && t.endsWith(")")) ||
            (t.startsWith("[") && t.endsWith("]"))
          ) {
            t = t.slice(1, -1).trim();
          }

          // Split on comma
          const parts = t.split(",").map(p => p.trim());
          if (parts.length !== 2) return null;

          const x = Number(parts[0]);
          const y = Number(parts[1]);

          // Ensure both are valid finite numbers
          if (!Number.isFinite(x) || !Number.isFinite(y)) return null;

          return [x, y];
        }
    CodeComponent set_arc_img_pos
      Code Type = Auto->JS
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      Begin Experiment:
        import math

        # The arc is centered on the prompt, so every top image is exactly `r` from it.
        cx, cy = prompt_pos
        r = 0.25        # distance of every top image from the prompt
        spread_deg = 45   # how far left/right swing from straight-up

        def _on_arc(angle_deg):
            a = math.radians(angle_deg)
            return (cx + r * math.cos(a), cy + r * math.sin(a))

        # 90 deg = straight up above the prompt; symmetric left/right around it
        center_pos = _on_arc(90)
        left_pos   = _on_arc(90 + spread_deg)
        right_pos  = _on_arc(90 - spread_deg)
    CodeComponent set_trigger_numbers
      Code Type = Auto->JS
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      Begin Routine:
        # trigger numbers
        # always event - number pairs

        trigger_dict = {
        "start/end": 255,
        "image_selected": 51,
        "feedback": 52,
        "replay_break": 53,
        "replay_break_end": 54,
        "order_retrieval_options": 59,
        "distance_retrieval_options": 58,
        "distance_retrieval_response": 56,
        "order_retrieval_response": 55,
        "task_break_begin": 81,
        "task_break_end": 82,
        "reflection_per": 31,
        "reflection_per_end": 32,

        }
  Routine instructions_01
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    CodeComponent set_trigger_start
      Code Type = Auto->JS
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      Begin Routine:
        trigNumber = trigger_dict["start/end"]
      Each Frame:
        if frameN == 0:
            bids.trigger(trigNumber, stim=instruction_part1, label="exp_start")
    CodeComponent bids_instruc
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part1,
                                trial_type="instruction",
                                type_of_stimulus="instruction_text",
                                component_label="instruction_part1")
      End Routine:
        bids.mark_offset(instruction_part1)
    TextComponent instruction_part1
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_part1_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part1.text = (
            "Welcome to the task.\n\n"
        "In this experiment, you will learn sequences of images.\n\n"
        "Learning phases are interleaved with retrieval phases, in which you will answer questions about the sequences you learned.\n\n"
        "Press any key to continue."
        )


        if language == "german":
            instruction_part1.text = (
        "Willkommen zu der Aufgabe.\n\n"
        "In diesem Experiment lernen Sie verschiedene Bildsequenzen.\n\n"
        "Die Lernphasen wechseln sich mit Abrufphasen ab.\n"
        "In den Abrufphasen beantworten Sie Fragen zu den zuvor\n"
        "gelernten Sequenzen.\n\n"
        "Drücken Sie eine beliebige Taste, um fortzufahren."

        )
    KeyboardComponent continue_button
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine set_learning_rows
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    CodeComponent take_learn_routes_from_list
      Code Type = Py
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      Begin Routine:
        selected_rows, learn_ptr = take_block(learn_pool, learn_ptr, trials_per_run)
        print(selected_rows)
  Routine choice_display
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    ImageComponent scene_image_2
      image [set every repeat] = $context_img_block
      size = (1,1)
      startVal [time (s)] = 0.0
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    CodeComponent set_trigger_image
      Code Type = Auto->JS
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      Each Frame:
        if frameN == 0:
            bids.trigger(correctTrigNumber, stim=correct, label="choice_display")
            core.wait(0.01)
    CodeComponent set_positions_correct_ans
      Code Type = Py
      disabled = True
      Begin Routine:
        # which item sits where on THIS trial
        pos2item = {}
        pos2item[correct_pos]   = 'target'
        pos2item[dist01_pos] = 'distractor_01'
        pos2item[dist02_pos] = 'distractor_02'

        # key -> position mapping
        key2pos = {
            left_key:   'left',
            right_key:  'right',
            center_key: 'up'
        }
      Each Frame:
        pressed = key_resp.keys
        if isinstance(pressed, list):
            pressed = pressed[-1] if pressed else "m"

        chosen_pos  = key2pos.get(pressed, None)
        chosen_item = pos2item.get(chosen_pos, None)

        is_correct = (chosen_item == 'target') if chosen_item is not None else None
    CodeComponent Init_routeClock_2
      Code Type = Py
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      Begin Routine:
        routClock = core.Clock()
        routClock.reset()

        key_resp_allKeys = None
        key_resp.clearEvents()

        polygon_4.setPos((0,0))
        polygon_4.setOpacity(0)
    CodeComponent bids_choice_disp
      Code Type = Auto->JS
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      Begin Routine:
        # which item sits where on THIS trial
        pos2item = {}
        pos2item[correct_pos]   = 'target'
        pos2item[dist01_pos] = 'distractor_01'
        pos2item[dist02_pos] = 'distractor_02'

        # key -> position mapping
        key2pos = {
            left_key:   'left',
            right_key:  'right',
            center_key: 'center'
        }
      Each Frame:
        ## schedule bids trigger setting
        bids.schedule_onset(prompt, type_of_stimulus="image",
        component_label="current_image",
        trial_type = "learn",
        concept_label = promptFile.partition("/")[-1],
        concept_exemplar = promptFile.partition("/")[-1],
        block_name=block,
        sequence_name=learningSeq,
        route_num=runIndexWithinSeq,
        trial_num=currPosInSeq)

        bids.schedule_onset(correct, type_of_stimulus="image",
        component_label="corr_next_image",
        trial_type = "learn",
        concept_label = correctFile.partition("/")[-1],
        concept_exemplar = correctFile.partition("/")[2],
        block_name=block,
        sequence_name=learningSeq,
        route_num=runIndexWithinSeq,
        trial_num=currPosInSeq)

        bids.schedule_onset(dist_01, type_of_stimulus="image",
        component_label="distractor 01 (close)",
        concept_label = dist_01File.partition("/")[-1],
        trial_type = "learn",
        concept_exemplar = dist_01File.partition("/")[-1],
        block_name=block,
        sequence_name=learningSeq,
        route_num=runIndexWithinSeq,
        trial_num=currPosInSeq)

        bids.schedule_onset(dist_02, type_of_stimulus="image",
        component_label="distractor 02 (far)",
        concept_label = dist_02File.partition("/")[-1],
        trial_type = "learn",
        concept_exemplar = dist_02File.partition("/")[-1],
        block_name=block,
        sequence_name=learningSeq,
        route_num=runIndexWithinSeq,
        trial_num=currPosInSeq)
      End Routine:
        bids.mark_offset(prompt)
        bids.mark_offset(correct)
        bids.mark_offset(dist_01)
        bids.mark_offset(dist_02)

        # response neeeds to be saved at end of trial
        pressed = key_resp.keys
        if isinstance(pressed, list):
            pressed = pressed[-1] if pressed else "m"

        chosen_pos  = key2pos.get(pressed, None)
        chosen_item = pos2item.get(chosen_pos, None)

        is_correct = (chosen_item == 'target') if chosen_item is not None else None
    PolygonComponent polygon_4
      fillColor [set every frame] = 0.0000, 0.0000, 0.0000
      lineColor [set every frame] = 0.0039, 0.0039, 0.0039
      opacity = 0
      shape = rectangle
      size = (0.16, 0.16)
      startVal [time (s)] = 0.0
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    ImageComponent prompt
      image [set every repeat] = $promptFile
      pos [set every repeat] = prompt_pos
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01
      image [set every repeat] = $dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02
      image [set every repeat] = $dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent correct
      image [set every repeat] = $correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    CodeComponent get_response_parameters
      Code Type = Py
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      Begin Routine:
        responded = False
        delayClock = None
        delayDone = False
        chosenPos = None
      Each Frame:
        if routClock.getTime() >= max_response_time:
            # Timeout
            responded = False
            continueRoutine = False

        if not responded:
            key_list = key_resp.getKeys(keyList=[left_key, right_key, center_key], waitRelease=False)

            if len(key_list) > 0:
                responded = True
                thisResp = key_list[0]
                key_resp.keys = thisResp.name
                key_resp.rt = thisResp.rt
                key_resp.duration = thisResp.duration


                if thisResp.name == left_key:
                    chosenPos = left_pos
                    KeyMeaning = "left"
                elif thisResp.name == right_key:
                    chosenPos = right_pos
                    KeyMeaning = "right"
                elif thisResp.name == center_key:
                    chosenPos = center_pos
                    KeyMeaning = "center"

                print(chosenPos)
                print(KeyMeaning)
                key_resp.corr = 1 if (KeyMeaning == correct_pos) else 0
                print(key_resp.corr)
                polygon_4.setPos(chosenPos)
                polygon_4.setOpacity(1.0)

                # change color of polygon for correct responses
                if key_resp.corr == 1:
                    polygonCol = [0, 1, 0]
                    polygon_4.setFillColor(polygonCol)
                    polygon_4.setLineColor(polygonCol)
                elif key_resp.corr == 0:
                    polygonCol = [1, -1, -1]
                    polygon_4.setFillColor(polygonCol)
                    polygon_4.setLineColor(polygonCol)
                else:
                    polygonCol = [0, 0, 0]
                    polygon_4.setFillColor(polygonCol)
                    polygon_4.setLineColor(polygonCol)

                delayClock = core.Clock()

                # recover the flip-locked onset of the keyboard component
                t_kb_start = key_resp.tStartRefresh
                if t_kb_start is None:
                    t_kb_start = key_resp.clock.getLastResetTime()
                    print(
                        f"[bids] WARNING: key_resp.tStartRefresh was None "
                        f"falling back to clock reset time "
                        f"({t_kb_start:.6f}). status={key_resp.status}, "
                        f"n_keys={len(_key_resp_allKeys)}, frameN={frameN}"
                    )

                press_onset_est = (t_kb_start + thisResp.rt) - bids.t0

                bids.add_instant("choice", trial_type="learn",
                block_name=block, sequence_name=learningSeq,
                route_num=runIndexWithinSeq, trial_num=currPosInSeq,
                response=thisResp.name,
                response_time=thisResp.rt,
                press_onset_est=press_onset_est,
                correct=key_resp.corr,
                expected_response=correct_ans,
                response_meaning=KeyMeaning)

        if responded and not delayDone and delayClock is not None and delayClock.getTime() >= 0.1:
            delayDone = True
            continueRoutine = False


        if not responded and routClock.getTime() >= (max_response_time-1):
            chooseNowText.setOpacity(1)
    CodeComponent get_response_parameters_2
      Code Type = Py
      disabled = True
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      Begin Routine:
        # determine which one is correct response on this trial
        # might need later
        correctAnsKey = pos_to_key[resolve_pos(correct_pos)]

        # start a clock to time out routine if necessary
        routClock = core.Clock()
        routClock.reset()

        # initialize
        responded = False
        key_resp.keys = []
        key_resp.rt = None

        # this attribute needs to also exist otherwise there is error
        key_resp.duration = None
      Each Frame:
        # timeout case
        if routClock.getTime() >= max_response_time:
            # no key was pressed in time
            key_resp.keys = None
            key_resp.rt = None
            responded = False
            continueRoutine = False
            key_resp.corr = None
            # (optionally store that it was a timeout)
            #log('response too slow')

        # if there is key selection
        if key_resp.keys:
                key_resp.corr = 1 if key_resp.keys == correctAnsKey else 0
                responded = True
                #log('response, correct: ', key_resp.corr)
                continueRoutine = False
    TextComponent chooseNowText
      font = $font_name
      letterHeight = 0.02
      opacity [set every repeat] = 0
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Bitte antworten Sie jetzt
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    KeyboardComponent key_resp
      allowedKeys = left_key, right_key, center_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_response_time
      store = first key
      syncScreenRefresh = False
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    CodeComponent set_trigger_response
      Code Type = Auto->JS
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      Begin Routine:
        response_trigger = trigger_dict["image_selected"]
        resp_trig_giv = False
      Each Frame:
        if key_resp.keys and not resp_trig_giv:
            bids.trigger(response_trigger, label="image_selected", on_flip=False,
                         block_name=block, sequence_name=learningSeq,
                         route_num=runIndexWithinSeq, trial_num=currPosInSeq)
            trigOn = True
            resp_trig_giv = True
            core.wait(0.01)
  Routine feedback
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    ImageComponent scene_image_3
      image [set every repeat] = $context_img_block
      size = (1,1)
      startVal [time (s)] = 0.0
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    CodeComponent control__polygon_2
      Code Type = Py
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      Begin Routine:
        polygon_8.setOpacity(0.0)
        if chosenPos:
            polygon_8.setPos(chosenPos)
            polygon_8.setOpacity(1.0)
            polygon_8.setFillColor(polygonCol)
            polygon_8.setLineColor(polygonCol)
    CodeComponent animation_control_2
      Code Type = Py
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      Begin Routine:
        # Initialize animation control
        endY = prompt_pos[1]   # end y-coord of moving image
        endX = prompt_pos[0]   # end x-coord of moving image
        maxAnimationDur = round(animation_time * expInfo['frameRate'])
        animationTimer = 0      # initialize variable
        animationDone = False   # initialize variable
        moveCorrect = False     # initialize variable
      Each Frame:
        # Start animation
        if not moveCorrect and not animationDone:
            moveCorrect = True

        # Run animation
        if moveCorrect and not animationDone:
            animationTimer += 1
            # Current position
            current_x, current_y = correct_2.pos
            # Compute direction toward target
            dx = endX - current_x
            dy = endY - current_y
            # Move a small fraction toward target
            move_fraction = feedback_steps  # fraction of remaining distance each frame
            new_x = current_x + dx * move_fraction
            new_y = current_y + dy * move_fraction
            # Update position
            correct_2.setPos([new_x, new_y])
            if key_resp.corr:
                polygon_8.setPos([new_x, new_y])
            # Stop when close enough to target (or if max duration exceeded)
            if (abs(dx) < rest_jump and abs(dy) < rest_jump) or animationTimer > maxAnimationDur:
                correct_2.setPos([endX, endY])
                if key_resp.corr:
                    polygon_8.setPos([new_x, new_y])
                animationDone = True
                moveCorrect = False
                continueRoutine = False
    CodeComponent animation_control
      Code Type = Py
      disabled = True
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      Begin Routine:
        # Initialize animation control
        endY = prompt_pos[1]    # end y-coor of moving image
        endX = prompt_pos[0]    # end x-coord of moving image

        maxAnimationDur = int(round(animation_time * expInfo['frameRate']))
        animationTimer = 0      # initialize variable
        animationDone = False   # initialize variable
        moveCorrect = False     # initialize variable
      Each Frame:
        # Start animation
        if not moveCorrect and not animationDone:
            moveCorrect = True

        # Run animation
        if moveCorrect and not animationDone:
            animationTimer += 1

            # Current position
            current_x, current_y = correct_2.pos

            # Compute direction toward target
            dx = endX - current_x
            dy = endY - current_y

            # Move a small fraction toward target
            move_fraction = feedback_steps # % of the remaining distance each frame
            new_x = current_x + dx * move_fraction
            new_y = current_y + dy * move_fraction

            # Update position
            correct_2.setPos((new_x, new_y))

            # Stop when close enough to target
            if (abs(dx) < rest_jump and abs(dy) < rest_jump) or animationTimer > maxAnimationDur:
            # if (abs(dx) < rest_jump and abs(dy) < rest_jump):
                correct_2.setPos((endX, endY))
                animationDone = True
                moveCorrect = False
                continueRoutine = False
    PolygonComponent polygon_8
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0039, 0.0039, 0.0039
      opacity = 0
      shape = rectangle
      size = (0.16, 0.16)
      startVal [time (s)] = 0.0
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    CodeComponent bids_feedback_disp
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        bids.schedule_onset(correct_2,
        type_of_stimulus="feedback",
        component_label="correct_moving",
        trial_type = "learn",
        block_name=block,
        sequence_name=learningSeq,
        route_num=runIndexWithinSeq,
        trial_num=currPosInSeq)
      End Routine:
        #bids.add_instant(
        #    "feedback",
        #    feedback_duration = animationTimer
        #)

        bids.mark_offset(correct_2)
    ImageComponent prompt_2
      image [set every repeat] = $promptFile
      pos [set every repeat] = prompt_pos
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01_2
      image [set every repeat] = $dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02_2
      image [set every repeat] = $dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    ImageComponent correct_2
      image [set every repeat] = $correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    CodeComponent trigger_feedback_disp
      Code Type = Auto->JS
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      Begin Routine:
        feedback_trigger_sent = False
      Each Frame:
        # feedback onset
        feedback_trigger = trigger_dict["feedback"]
        if moveCorrect and not feedback_trigger_sent:
            bids.trigger(feedback_trigger, stim=correct_2, label="feedback")
            feedback_trigger_sent = True
  Routine too_slow_routine
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    CodeComponent determine_start
      Code Type = Auto->JS
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      Begin Routine:
        if responded:
            continueRoutine = False
    ImageComponent scene_image_4
      image [set every repeat] = $context_img_block
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = too_slow_dur
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    TextComponent tooSlowtext
      font = $font_name
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = too_slow_dur
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    CodeComponent set_slow_msg_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            tooSlowtext.text = (
                "Too slow. You need to respond faster."
            )

        if language == "german":
            tooSlowtext.text = (
                "Zu langsam. Sie müssen schneller antworten."
            )

        if language == "french":
            tooSlowtext.text = (
                "Trop lent. Vous devez répondre plus rapidement. "
            )
      End Routine:
        bids.close_trial()
  Routine rest_period
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    CodeComponent set_trigger_rest
      Code Type = Auto->JS
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      Begin Routine:
        replay_endtrig_sent = False
      Each Frame:
        replayTrigger = trigger_dict["replay_break"]
        if frameN == 0:
            bids.trigger(replayTrigger, stim=fix_cross, label="replay_break")
      End Routine:
        endTrigger = trigger_dict["replay_break_end"]
        if not replay_endtrig_sent:
            bids.trigger(endTrigger, label="replay_break_end", on_flip=False)
            replay_endtrig_sent = True
    CodeComponent bids_break_logging
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame
        bids.schedule_onset(
            fix_cross,
            type_of_stimulus="replay_break",
            block_name = block,
            route_num=runIndexWithinSeq,
            component_label="fix_cross_replay_break",
            trial_type = "learn",
            sequence_name=learningSeq,
            trial_num=currPosInSeq)
      End Routine:
        # log offset at last frame of routine

        bids.mark_offset(fix_cross)
    TextComponent fix_cross
      font = $font_name
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = replay_break_dur
      text = +
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  Routine set_retrieval_rows
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    CodeComponent take_retr_routes_from_route
      Code Type = Auto->JS
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      Begin Routine:
        selected_rows, retr_ptr = take_block(retr_pool, retr_ptr, 20*2)
        print(selected_rows)
  Routine first_image
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    CodeComponent set_trigger_image_1
      Code Type = Auto->JS
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      Each Frame:
        # ImgTrig = img_firstTrigNumber
        ImgTrig = retrIm1Trig

        if frameN == 0:
            bids.trigger(ImgTrig, stim=image_1, label="image_1_retr")
    ImageComponent image_1
      image [set every repeat] = $img_first
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr_new
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    CodeComponent bids_first_retr
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting

        if frameN > 0:
            bids.schedule_onset(image_1, type_of_stimulus="image",
            component_label="image_1_retr",
            trial_type = "retr",
            concept_label = img_first.partition("/")[-1],
            concept_exemplar = img_first.partition("/")[-1],
            block_name=block,
            sequence_name=learningSeq,
            trial_num=retrieval_trials.thisN)
      End Routine:
        bids.mark_offset(image_1)
  Routine second_image
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    CodeComponent set_trigger_image_2
      Code Type = Auto->JS
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      Each Frame:
        # ImgTrig = img_secondTrigNumber
        ImgTrig = retrIm2Trig

        if frameN == 0:
            bids.trigger(ImgTrig, stim=image_2, label="image_2_retr")
    ImageComponent image_2
      image [set every repeat] = $img_second
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr_new
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    CodeComponent bids_second_retr
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting

        if frameN > 0:
            bids.schedule_onset(image_2, type_of_stimulus="image",
            component_label="image_2_retr",
            trial_type = "retr",
            concept_label = img_second.partition("/")[-1],
            concept_exemplar = img_second.partition("/")[-1],
            block_name=block,
            sequence_name=learningSeq,
            trial_num=retrieval_trials.thisN)
      End Routine:
        bids.mark_offset(image_2)
  Routine too_slow_routine_2
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    CodeComponent determine_start_2
      Code Type = Auto->JS
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      Begin Routine:
        if responded_retr_slider:
            continueRoutine = False
    TextComponent tooSlowtext_2
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = too_slow_dur
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    CodeComponent set_slow_msg_text_2
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            tooSlowtext_2.text = (
                "Too slow. You need to respond faster."
            )

        if language == "german":
            tooSlowtext_2.text = (
                "Zu langsam. Sie müssen schneller antworten."
            )

        if language == "french":
            tooSlowtext_2.text = (
                "Trop lent. Vous devez répondre plus rapidement. "
            )
      End Routine:
        bids.close_trial()
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  Routine instructions_new_learn
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    CodeComponent control_routine
      Code Type = Auto->JS
      Begin Routine:
        #if miniblocks.thisN == n_learn_rout * 3 - 1:
            #continueRoutine = False
    TextComponent instruction_text_newroute
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = instr_newroute_dur
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    CodeComponent set_instruction_newroute
      Code Type = Auto->JS
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      Begin Routine:
        if language == "french":
            instruction_text_newroute.text = ("Vous allez maintenant réapprendre les associations entre les images.")
        if language == "english":
            instruction_text_newroute.text = ("The learning of associations will continue now.")
        if language == "german":
            instruction_text_newroute.text = ("Jetzt geht das Assoziationslernen weiter.")
  Routine instructions_end
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    CodeComponent set_trigger_end
      Code Type = Auto->JS
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      Begin Routine:
        trigNum = trigger_dict["start/end"]
      Each Frame:
        if frameN == 0:
            bids.trigger(trigNum, stim=instructions_end_text, label="exp_end")
    TextComponent instructions_end_text
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent set_instructions_end_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions_end_text.text = ("The task is over now. Thank you for your participation.\n"
            "Press any key to exit")
        if language == "german":
            instructions_end_text.text = ("Die Aufgabe ist nun vorbei.\n"
            "Vielen Dank für die Teilnahme. Drücken Sie eine beliebige Taste, um das Experiment zu beenden.")
    KeyboardComponent continue_button_2
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = max_read_dur
      store = first key
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
  Routine reset_rows_to_select
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    CodeComponent define_number_trials
      Code Type = Py
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      Begin Experiment:
        def take_block(pool, ptr, n):
            if ptr + n > len(pool):
                raise RuntimeError(f"Not enough unique trials left to take {n} rows.")
            rows = pool[ptr:ptr+n]
            ptr += n
            return rows, ptr
      Begin Routine:
        if Block.thisN == 0:
            N_LEARN = trials_per_run * n_routes_block # number of learning trials to use
            N_RETR = n_routes_block * 20 * 2 # number of retrieval trials to use
        elif Block.thisN > 0:
            N_LEARN = trials_per_run * (n_routes_block) * 2# number of learning trials to use
            N_RETR = 2* (n_routes_block) * 20 * 2 # number of retrieval trials to use

        learn_pool = list(range(N_LEARN))
        retr_pool  = list(range(N_RETR))
        learn_ptr = 0
        retr_ptr = 0

        # set context images

        if Block.thisN == 0:
            context_img_block = r"stimuli\context_images\sea_01.jpg"
        if Block.thisN == 1:
            context_img_block = r"stimuli\context_images\forest_01.jpg"
        if Block.thisN == 2:
            context_img_block = r"stimuli\context_images\snow_01.jpg"
        if Block.thisN == 3:
            context_img_block = r"stimuli\context_images\desert_02.jpg"
    CodeComponent set_conditionFiles_routes
      Code Type = Auto->JS
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      Begin Routine:
        # Begin Routine (inside outer loop, before inner loop starts)
        cond_file_learning = condFileLearning.format(participant_ID=expInfo['participant_ID'])

        # Begin Routine (inside outer loop, before inner loop starts)
        cond_file_retrieval = condFileRetrieval.format(participant_ID=expInfo['participant_ID'])
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
  Routine instructions_02
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    TextComponent instruction_part2
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_part2_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part2.text = (
        "To help you remember the order of the images, please try to connect them into a story in your head.\n\n"
        "For example: the dog is playing guitar, and then the lamp turns on.\n\n"
        "You will now first practice the learning phases.\n\n"
        "Press any key to learn how the learning phases work."
        )


        if language == "german":
            instruction_part2.text = (
        "Um sich die Reihenfolge besser zu merken, verbinden Sie die\n"
        "Bilder gedanklich zu einer Geschichte.\n\n"
        "Zum Beispiel: Der Hund spielt Gitarre, danach geht die Lampe an.\n\n"
        "Zunächst üben Sie die Lernphasen.\n\n"
        "Drücken Sie eine beliebige Taste, um zu erfahren, wie diese ablaufen."

        )
    KeyboardComponent continue_button_3
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine instructions_03
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    TextComponent instruction_part3
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_part3_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part3.text = (
        "In each learning trial, you start with the current image\n"
        "in the sequence. This image is shown at the bottom of the\n"
        "screen. At the top of the screen, you will see three\n"
        "different images. Your task is to choose which of these\n"
        "images comes next in the sequence.\n\n"
        "Press any key to continue. "
        )


        if language == "german":
            instruction_part3.text = (
        "In jedem Lerndurchgang sehen Sie unten das aktuelle Bild\n"
        "der Sequenz. Oben werden drei Bilder angezeigt.\n\n"
        "Wählen Sie das Bild aus, das als Nächstes in der Sequenz folgt.\n\n"
        "Drücken Sie eine beliebige Taste, um fortzufahren."

        )
    KeyboardComponent continue_button_4
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine instructions_04
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    TextComponent instruction_part4
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_part4_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part4.text = (
        "Use the left, right, and up keys to select the image in the left, right, or middle position.\n\n"
        "The position of the images on the screen does not indicate their order in the sequence.\n"
        "Any image can appear in any position.\n\n"
        "Please do not write down the associations you learn. Try to keep the sequences in your head.\n\n"
        "Press any key to continue."
        )


        if language == "german":
            instruction_part4.text = (
        "Verwenden Sie die linke grüne, die rechte blaue\n"
        "und die obere rote Taste, um das linke, rechte oder mittlere\n"
        "Bild auszuwählen.\n\n"
        "Die Position der Bilder auf dem Bildschirm\n"
        "hat keine Bedeutung für die Reihenfolge der Sequenz.\n"
        "Jedes Bild kann an jeder Position erscheinen.\n\n"
        "Drücken Sie eine beliebige Taste, um fortzufahren."

        )
    KeyboardComponent continue_button_5
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine instructions_05
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    CodeComponent instruction_part5_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part5.text = (
        "After you make a choice, you will receive feedback:\n"
        "The correct next image in the sequence will move down \n"
        "and replace the current image.\n\n"
        "The next learning trial then starts from this new current image.\n\n"
        "Press any key to continue. "
        )


        if language == "german":
            instruction_part5.text = (
        "Nach Ihrer Auswahl erhalten Sie Feedback:\n"
        "Das richtige nächste Bild bewegt sich nach unten\n"
        "und wird zum aktuellen Bild für den nächsten Lerndurchgang.\n\n"
        "Drücken Sie eine beliebige Taste, um fortzufahren."

        )
    TextComponent instruction_part5
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    KeyboardComponent continue_button_6
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine instructions_06
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    CodeComponent instruction_part6_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part6.text = (
        "Importantly, the image that moves down is always the correct next image, even if you chose incorrectly.\n"
        "In this way, you will learn the entire sequence step by step through trial and error.\n\n"
        "Please respond as quickly and accurately as possible.\n\n"
        "Press any key to continue."
        )


        if language == "german":
            instruction_part6.text = (
        "Wichtig: Auch bei einer falschen Antwort bewegt\n"
        "sich immer das richtige nächste Bild nach unten.\n\n"
        "So lernen Sie die Sequenz schrittweise durch Versuch\n"
        "und Irrtum. Antworten Sie bitte so schnell und genau wie möglich.\n\n"
        "Drücken Sie eine beliebige Taste, um fortzufahren"


        )
    TextComponent instruction_part6
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    KeyboardComponent continue_button_7
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine practice_choice_display
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    CodeComponent Init_routeClock
      Code Type = Py
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      Begin Routine:
        routClock = core.Clock()
        routClock.reset()

        key_resp_2_allKeys = None
        key_resp_2.clearEvents()
    CodeComponent set_positions_correct_ans_2
      Code Type = Py
      disabled = True
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      Begin Routine:
        from psychopy import event  # if not already imported at the top

        # which item sits where on THIS trial
        pos2item = {}
        pos2item[correct_pos] = prompt_prc
        pos2item[dist01_pos]  = dist_01_prc
        pos2item[dist02_pos]  = dist_02_prc

        # key -> position mapping
        key2pos = {
            left_key:   'left',
            right_key:  'right',
            center_key: 'center',
        }

        event.clearEvents()
        chosen_item = None
        is_correct = None

        polygon.setOpacity(0.0)
        polygon.setPos([0, 0])

        key_resp_2.keys = None
        key_resp_2.rt = None
      Each Frame:
        key_list = key_resp_2.getKeys(keyList=[left_key, right_key, center_key], waitRelease=False)

        if len(key_list) > 0:
            pressed = key_list[0].name
            print(pressed)
            is_correct = (str(pressed) == str(correct_ans))
            print(correct_ans)
            print("is_correct:", is_correct)
            key_resp_2.corr = 1 if is_correct else 0
    PolygonComponent polygon
      fillColor [set every frame] = 0.0000, 0.0000, 0.0000
      lineColor [set every frame] = 0.0039, 0.0039, 0.0039
      opacity [set every repeat] = 0
      pos [set every repeat] = (0, 0)
      shape = rectangle
      size = (0.16, 0.16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    ImageComponent prompt_prc
      image [set every repeat] = $promptFile
      pos [set every repeat] = prompt_pos
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    ImageComponent dist_01_prc
      image [set every repeat] = $dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    ImageComponent dist_02_prc
      image [set every repeat] = $dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    ImageComponent correct_prc
      image [set every repeat] = $correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    KeyboardComponent key_resp_2
      allowedKeys = left_key, right_key, center_key
      correctAns = $correct_ans
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
      syncScreenRefresh = False
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    CodeComponent get_response_parameters_3
      Code Type = Py
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      Begin Routine:
        responded = False
        delayClock = None
        delayDone = False
        chosenPos = None
      Each Frame:
        if not responded:
            key_list = key_resp_2.getKeys(keyList=[left_key, right_key, center_key], waitRelease=False)

            if len(key_list) > 0:
                responded = True
                thisResp = key_list[0]
                key_resp_2.keys = thisResp.name
                key_resp_2.rt = thisResp.rt
                key_resp_2.duration = thisResp.duration


                if thisResp.name == left_key:
                    chosenPos = left_pos
                    KeyMeaning = "left"
                elif thisResp.name == right_key:
                    chosenPos = right_pos
                    KeyMeaning = "right"
                elif thisResp.name == center_key:
                    chosenPos = center_pos
                    KeyMeaning = "center"

                print(chosenPos)
                print(KeyMeaning)
                key_resp_2.corr = 1 if (KeyMeaning == correct_pos) else 0
                print(key_resp_2.corr)
                polygon.setPos(chosenPos)
                polygon.setOpacity(1.0)

                # change color of polygon for correct responses
                if key_resp_2.corr == 1:
                    polygonCol = [0, 1, 0]
                    polygon.setFillColor(polygonCol)
                    polygon.setLineColor(polygonCol)
                elif key_resp_2.corr == 0:
                    polygonCol = [1, -1, -1]
                    polygon.setFillColor(polygonCol)
                    polygon.setLineColor(polygonCol)
                else:
                    polygonCol = [0, 0, 0]
                    polygon.setFillColor(polygonCol)
                    polygon.setLineColor(polygonCol)

                delayClock = core.Clock()

        if responded and not delayDone and delayClock is not None and delayClock.getTime() >= 0.1:
            delayDone = True
            continueRoutine = False
    TextComponent instructions_choose_2
      font = $font_name
      letterHeight = 0.025
      pos = instruc_pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent set_instructions_choose_2
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions_choose_2.text = ("Choose the next image in the sequence with the keys. ")
        if language == "german":
            instructions_choose_2.text = ("Wählen Sie das nächste Bild in der Sequenz.")
  Routine practice_feedback
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    CodeComponent control__polygon
      Code Type = Py
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      Begin Routine:
        polygon_7.setOpacity(0.0)
        if chosenPos:
            polygon_7.setPos(chosenPos)
            polygon_7.setOpacity(1.0)
            polygon_7.setFillColor(polygonCol)
            polygon_7.setLineColor(polygonCol)
    CodeComponent animation_control_js
      Code Type = Py
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      Begin Routine:
        # Initialize animation control
        endY = prompt_pos[1]   # end y-coord of moving image
        endX = prompt_pos[0]   # end x-coord of moving image
        maxAnimationDur = round(animation_time * expInfo['frameRate'])
        animationTimer = 0      # initialize variable
        animationDone = False   # initialize variable
        moveCorrect = False     # initialize variable
      Each Frame:
        # Start animation
        if not moveCorrect and not animationDone:
            moveCorrect = True

        # Run animation
        if moveCorrect and not animationDone:
            animationTimer += 1
            # Current position
            current_x, current_y = correct_prc_2.pos
            # Compute direction toward target
            dx = endX - current_x
            dy = endY - current_y
            # Move a small fraction toward target
            move_fraction = feedback_steps  # fraction of remaining distance each frame
            new_x = current_x + dx * move_fraction
            new_y = current_y + dy * move_fraction
            # Update position
            correct_prc_2.setPos([new_x, new_y])
            if key_resp_2.corr:
                polygon_7.setPos([new_x, new_y])
            # Stop when close enough to target (or if max duration exceeded)
            if (abs(dx) < rest_jump and abs(dy) < rest_jump) or animationTimer > maxAnimationDur:
                correct_prc_2.setPos([endX, endY])
                if key_resp_2.corr:
                    polygon_7.setPos([new_x, new_y])
                animationDone = True
                moveCorrect = False
                continueRoutine = False
    PolygonComponent polygon_7
      fillColor = 0,0,0
      lineColor = 0.0039, 0.0039, 0.0039
      opacity = 0
      shape = rectangle
      size = (0.16, 0.16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    ImageComponent prompt_prc_2
      image [set every repeat] = $promptFile
      pos [set every repeat] = prompt_pos
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    ImageComponent dist_01_prc_2
      image [set every repeat] = $dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    ImageComponent dist_02_prc_2
      image [set every repeat] = $dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    ImageComponent correct_prc_2
      image [set every repeat] = $correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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  Routine practice_too_slow_routine
    RoutineSettingsComponent practice_too_slow_routine
      disabled = True
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    CodeComponent initialize_js_33
      Code Type = JS
      Begin JS Experiment:
        window.tooSlowtext_3 = null;
        window.practice_too_slow_routineMaxDurationReached = null;
      Begin JS Routine:
        window.practice_too_slow_routineMaxDuration = null;
        window.practice_too_slow_routineComponents = null;
    CodeComponent determine_start_3
      Code Type = Auto->JS
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      Begin Routine:
        if responded:
            continueRoutine = False
    TextComponent tooSlowtext_3
      font = $font_name
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = too_slow_dur
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    CodeComponent set_slow_msg_text_3
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            tooSlowtext_3.text = (
                "Too slow. You need to respond faster."
            )

        if language == "german":
            tooSlowtext_3.text = (
                "Zu langsam. Sie müssen schneller antworten."
            )
  Routine retrieval_type1_practice
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    TextComponent fix_cross_retrbegin
      font = $font_name
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_dur_retr
      text [set every repeat] = +
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  Routine first_image_prc
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    ImageComponent image_1_prc
      image [set every repeat] = $img_first
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr_new + 0.5
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    ImageComponent info_example_3
      image [set every repeat] = $ImageExamplePath
      pos = (0, -0.2)
      size = (0.7,None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr_new + 0.5
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  Routine second_image_prc
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    ImageComponent image_2_prc
      image [set every repeat] = $img_second
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr_new + 0.5
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    ImageComponent info_example_5
      image [set every repeat] = $ImageExamplePath
      pos = (0, -0.2)
      size = (0.7,None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur_retr_new + 0.5
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  Routine instruction_retrieval_trials
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    TextComponent instruction_part7
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_part7_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part7.text = (
           "Good job!\n\n"
        "The learning phases are interleaved with retrieval phases, in which you will answer questions about the learned sequences.\n"
        "In a retrieval trial, you will always be presented with two images from the sequence.\n"
        "One is presented after the other\n\n"
        "Press any key to continue."
        )


        if language == "german":
            instruction_part7.text = (
        "Gut gemacht!\n\n"
        "Die Lernphasen wechseln sich mit Abrufphasen ab.\n"
        "Dabei beantworten Sie Fragen zu den gelernten Sequenzen.\n\n"
        "In jedem Abrufdurchgang sehen Sie nacheinander zwei\n"
        "Bilder aus einer Sequenz.\n\n"
        "Drücken Sie eine beliebige Taste, um fortzufahren."


        )
    KeyboardComponent continue_button_8
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine instruction_practice_type1
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    TextComponent instruction_part8
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_part8_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part8.text = (
            "You are now ready to practice the retrieval trials.\n\n"
            "Plese remember to use the periods after the two images were shown to think\n"
            "about the order and distance questions.\n\n"
            "Press any key to start the retrieval practice")
        if language == "german":
            instruction_part8.text = (
        "Sie sind nun bereit, die Abrufdurchgänge zu üben.\n\n"
        "Nutzen Sie die kurze Pause nach der Bildpräsentation,\n"
        "um bereits über die Reihenfolge und die Distanz nachzudenken.\n\n"
        "Drücken Sie eine beliebige Taste, um die Übung zu starten."

        )
    KeyboardComponent continue_button_9
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = max_read_dur
      store = first key
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    CodeComponent initialize_practice_errors
      Code Type = Auto->JS
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      Begin Routine:
        practice_errors = 0
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  Routine instructions_07
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    TextComponent instructions_part7
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_part7_text_2
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions_part7.text = (
        "You finished all the practice trials.\nThe main task starts now.\n\n"
        "Please minimize movement during the main task phases.\n\n"
        "Reminder: At the beginning, you will not yet know the correct sequence and will learn through trial and error over time.\n\n"
        "Press any key to start the main task."
        )


        if language == "german":
            instructions_part7.text = (
        "Sie haben alle Übungsdurchgänge beendet.\n"
        "Nun beginnt die Hauptaufgabe.\n\n"
        "Bitte bewegen Sie Körper und Augen während der\n"
        "Aufgabenphasen so wenig wie möglich.\n\n"
        "Zu Beginn kennen Sie die richtige Sequenz noch nicht.\n"
        "Sie lernen sie schrittweise durch Versuch und Irrtum.\n\n"
        "Drücken Sie eine beliebige Taste, um die Hauptaufgabe zu starten."

        )
    KeyboardComponent continue_button_13
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine retrieval_backg_info
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    TextComponent instruction_info
      font = $font_name
      letterHeight = 0.025
      pos = (0.0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_info_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_info.text = (
            "In the practice of the retrieval trials, you will get some background information on how the sequence of images is structured.\n"
            "This will appear at the bottom.\n\nIn the main trials, there will be no additional information.\n"
            "You should extract this information from the pairwise associations learned.\n\n"
            "Press any key to continue."
        )
        if language == "german":
            instruction_info.text = (
        "In den Übungsdurchgängen erhalten Sie unten\n"
        "auf dem Bildschirm zusätzliche Hinweise zur Struktur\n"
        "der Bildsequenz.\n\n"
        "In der Hauptaufgabe werden diese Hinweise nicht\n"
        "mehr angezeigt. Dort müssen Sie die Struktur aus\n"
        "den gelernten Bildpaaren ableiten.\n\n"
        "Drücken Sie eine beliebige Taste, um fortzufahren."

        )
    KeyboardComponent continue_button_15
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine retr_response_feedback
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    TextComponent text_feedback
      font = $font_name
      letterHeight = 0.025
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent set_text_feedback
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english" and resp_2.corr==1:
            text_feedback.text = (f"Good job! You understood the retrieval task.")

        if language == "german" and resp_2.corr==1:
            text_feedback.text = (f"Gut gemacht! Sie haben Abruf verstanden.")


        if resp_2.corr==0:
            if language == "english":
                text_feedback.text = (
        "Your answer was incorrect.\n"
        "Please review the background information again and look at the full image sequence. "
        "Determine how many images appear between the two prompted images in that sequence. "
        "Only count the images in between them — do NOT include the two prompted images themselves."
        )
            if language=="german":
                text_feedback.text = (
        "Ihre Antwort war falsch.\n"
        "Bitte schauen Sie sich die Hintergrundinformationen noch einmal an. Bestimmen Sie, "
        "wie weit die Bilder in der gezeigten Sequenz auseinanderliegen.")
    ImageComponent info_example_2
      image [set every repeat] = $ImageExamplePath
      size = (0.8,None)
      startVal [condition] = resp_2.corr==0
      stopVal [duration (s)] = max_read_dur
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    KeyboardComponent continue_button_16
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = max_read_dur
      store = first key
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    CodeComponent control_retry_loop
      Code Type = Py
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      Begin Routine:
        prc_fdbackClock = core.Clock()
        prc_fdbackClock.reset()
      Each Frame:
        if prc_fdbackClock.getTime() >= max_read_dur:
            # Timeout
            continueRoutine = False
      End Routine:
        print(resp_2.corr)
        if resp_2.corr == 1:
            retry_loop.finished = True
        else:
            retry_loop.finished = False
    TextComponent text_continue
      font = $font_name
      letterHeight = 0.025
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent set_text_continue
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english" and resp_2.corr==1:
            text_continue.text = (
            "Press RETURN to continue.")

        if language == "german" and resp_2.corr==1:
            text_continue.text = (
            "Drücken Sie eine beliebige Taste, um weiterzumachen.")


        if resp_2.corr==0:
            if language == "english":
                text_continue.text = (
                "When you know the correct answer, press RETURN to answer the question again.")
            if language=="german":
                text_continue.text = (
                "Wenn Sie die richtige Antwort wissen, drücken Sie eine beliebige Taste, um die Frage noch einmal zu beantworten."
                )
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  Routine mask_retr1_prc
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    ImageComponent mask_img1
      image = stimuli/mask_images/mask_00.png
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    ImageComponent info_example_4
      image [set every repeat] = $ImageExamplePath
      pos = (0, -0.2)
      size = (0.7,None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine mask_retr2_prc
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    ImageComponent mask_img2
      image = stimuli/mask_images/mask_01.png
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    ImageComponent info_example_6
      image [set every repeat] = $ImageExamplePath
      pos = (0, -0.2)
      size = (0.7,None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine reflection_period
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    TextComponent fix_cross_reflretr_2
      font = $font_name
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = reflection_win_dur + 2
      text = +
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    TextComponent text
      font = $font_name
      letterHeight = 0.02
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = reflection_win_dur + 2
      text = Denken Sie jetzt über die Antworten nach. 
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  Routine retr_response_order_prc
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    CodeComponent clear_clock
      Code Type = Py
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      Begin Routine:
        _resp_3_allKeys = None
        resp_3.clearEvents()
        retrClock = core.Clock()
        retrClock.reset()

        polygon_9.setPos((0,0))
        polygon_9.setOpacity(0)
    TextComponent yes_txt_3
      font = $font_name
      letterHeight = 0.03
      pos [set every repeat] = leftside_retr if opt_left=="yes" else rightside_retr
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    TextComponent no_txt_3
      font = $font_name
      letterHeight = 0.03
      pos [set every repeat] = rightside_retr if opt_right=="no" else leftside_retr
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    PolygonComponent polygon_9
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 2
      opacity = 0
      shape = rectangle
      size = (0.08, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    KeyboardComponent resp_3
      allowedKeys = left_key, right_key
      correctAns = $correct_key
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
      syncScreenRefresh = False
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    CodeComponent set_option_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            yes_txt_3.text = ("yes")
            no_txt_3.text = ("no")
        if language == "german":
            yes_txt_3.text = ("ja")
            no_txt_3.text = ("nein")
        if language == "french":
            yes_txt_3.text = ("oui")
            no_txt_3.text = ("non")
    CodeComponent end_routine_after_resp_2
      Code Type = Py
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      Begin Routine:
        responded_retr = False
        delayClock = None
        delayDone = False
      Each Frame:
        if retrClock.getTime() >= max_read_dur:
            # Timeout
            responded_retr = False
            continueRoutine = False

        if not responded_retr:
            key_list = resp_3.getKeys(keyList=[left_key, right_key], waitRelease=False)
            if len(key_list) > 0:
                responded_retr = True
                thisResp = key_list[0]
                if thisResp.name == left_key:
                    chosenPos = [-0.05, 0]
                elif thisResp.name == right_key:
                    chosenPos = [0.05, 0]
                resp_3.keys = thisResp.name
                resp_3.rt = thisResp.rt
                resp_3.duration = thisResp.duration
                if thisResp.name == correct_key:
                    resp_3.corr = 1
                else:
                    resp_3.corr = 0
                    practice_errors += 1
                polygon_9.setPos(chosenPos)
                polygon_9.setOpacity(1.0)
                delayClock = core.Clock()

        if responded_retr and not delayDone and delayClock is not None and delayClock.getTime() >= 0.1:
            delayDone = True
            continueRoutine = False
    ImageComponent info_example_7
      image [set every repeat] = $ImageExamplePath
      pos = (0, -0.2)
      size = (0.7,None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent set_text_question_order
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":
            text_question_order.text = ("Presented order is order from sequence?")
        if language=="german":
            text_question_order.text = ("Präsentationsreihenfolge entspricht Sequenzreihenfolge?")
    TextComponent text_question_order
      font = $font_name
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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  Routine retr_response_distance_prc
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    CodeComponent clear_clock_2
      Code Type = Py
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      Begin Routine:
        _resp_2_allKeys = None
        resp_2.clearEvents()
        retrClock = core.Clock()
        retrClock.reset()
    KeyboardComponent resp_2
      allowedKeys = [left_key, right_key, center_key, down_key]
      correctAns = $correct_key
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
      syncScreenRefresh = False
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    CodeComponent controlslider_pos_js_2
      Code Type = Py
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      Begin Routine:
        responded_retr_slider = False
        delayClock = None
        delayDone = False
      Each Frame:
        keysPressed = resp_2.getKeys(keyList=[left_key, right_key, center_key, down_key], waitRelease=False) # from event.getKeys
        if len(keysPressed) > 0:

            chosen_key = keysPressed[0]  # extract the string from the KeyPress object
            if chosen_key.name == left_key:
                chosenDis = 5
                opt_5_prc.color = "blue"
            elif chosen_key.name == right_key:
                chosenDis = 3
                opt_3_prc.color = "blue"

            elif chosen_key.name == center_key:
                chosenDis = 2
                opt_2_prc.color = "blue"

            elif chosen_key.name == down_key:
                chosenDis = 4
                opt_4_prc.color = "blue"


            resp_2.keys = chosenDis
            resp_2.rt = chosen_key.rt
            resp_2.duration = chosen_key.duration
            if chosenDis == distance_correct:
                resp_2.corr = 1
            else:
                resp_2.corr = 0

            responded_retr_slider = True
            delayClock = core.Clock()

        if responded_retr_slider and not delayDone and delayClock is not None and delayClock.getTime() >= 0.1:
            delayDone = True
            continueRoutine = False
      End Routine:
        if not responded_retr_slider:
            practice_errors += 1
    ImageComponent info_example
      image [set every repeat] = $ImageExamplePath
      pos = (0, -0.2)
      size = (0.7,None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    TextComponent opt_2_prc
      color [set every repeat] = white
      font = $font_name
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
      text = 2
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    TextComponent opt_3_prc
      color [set every repeat] = white
      font = $font_name
      letterHeight = 0.03
      pos = (0.05, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
      text = 3
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    TextComponent opt_4_prc
      color [set every repeat] = white
      font = $font_name
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
      text = 4
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    TextComponent opt_5_prc
      color [set every repeat] = white
      font = $font_name
      letterHeight = 0.03
      pos = (-0.05,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
      text = 5
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    CodeComponent set_text_question_retrieval
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":
            text_question_retrieval.text = ("What is the distance between the images in the sequence")
        if language=="german":
            text_question_retrieval.text = ("Wie viele Schritte zum ersten bis zum zweiten Bild?")
    TextComponent text_question_retrieval
      font = $font_name
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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  Routine retr_ITI
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    CodeComponent bids_retr_question
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(
            fix_cross_retrbegin_2,
            type_of_stimulus="fixcross",
            component_label="retrieval_ITIcross",
            trial_type="retr",
            block_name=block,
            sequence_name=learningSeq,
            trial_num=retrieval_trials.thisN,
            distance_correct=distance_correct
        )
      End Routine:
        bids.mark_offset(fix_cross_retrbegin_2)
    TextComponent fix_cross_retrbegin_2
      font = $font_name
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_dur_retr
      text [set every repeat] = +
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  Routine mask_retr1
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    ImageComponent mask_img1_2
      image = stimuli/mask_images/mask_00.png
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine mask_retr2
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    ImageComponent mask_img2_2
      image = stimuli/mask_images/mask_01.png
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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  Routine reflection_period_retr
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    CodeComponent set_trigger_reflection
      Code Type = Auto->JS
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      Begin Routine:
        end_trig_send = False
      Each Frame:
        ReflTrig = trigger_dict["reflection_per"]
        if frameN == 0:
            bids.trigger(ReflTrig, stim=fix_cross_reflretr, label="reflection_start")
      End Routine:
        ReflTrigEnd = trigger_dict["reflection_per_end"]
        if not end_trig_send:
            bids.trigger(ReflTrigEnd, label="reflection_end", on_flip=False)
            end_trig_send = True
            core.wait(0.01) # wait so no overlap with next img trigger
    TextComponent fix_cross_reflretr
      font = $font_name
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = reflection_win_dur
      text = +
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  Routine retr_response_order
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    CodeComponent set_trigger_opt_onset
      Code Type = Auto->JS
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      Each Frame:
        OptTrig = trigger_dict["order_retrieval_options"]
        if frameN == 0:
            bids.trigger(OptTrig, stim=yes_txt, label="order_options")
            core.wait(0.01)
    CodeComponent clear_clock_3
      Code Type = Py
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      Begin Routine:
        _resp_allKeys = None
        resp.clearEvents()
        retrClock = core.Clock()
        retrClock.reset()

        polygon_6.setPos((0,0))
        polygon_6.setOpacity(0)
    PolygonComponent polygon_6
      lineColor = 0.0039, 0.0039, 0.0039
      lineWidth = 1.5
      opacity = 0
      shape = rectangle
      size = (0.08, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent yes_txt
      font = $font_name
      letterHeight = 0.03
      pos [set every repeat] = leftside_retr if opt_left=="yes" else rightside_retr
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    TextComponent no_txt
      font = $font_name
      letterHeight = 0.03
      pos [set every repeat] = rightside_retr if opt_right=="no" else leftside_retr
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    CodeComponent set_option_text_2
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            yes_txt.text = ("yes")
            no_txt.text = ("no")
        if language == "german":
            yes_txt.text = ("ja")
            no_txt.text = ("nein")
        if language == "french":
            yes_txt.text = ("oui")
            no_txt.text = ("non")
    CodeComponent end_routine_after_resp
      Code Type = Py
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      Begin Routine:
        # initialize
        # initialize
        responded_retr = False
        delayClock = None
        delayDone = False
        order_resp_meaning = None
        order_press_onset = None
      Each Frame:
        if retrClock.getTime() >= retr_dur and not responded_retr:
            # Timeout
            responded_retr = False
            continueRoutine = False

        if not responded_retr:
            key_list = resp.getKeys(keyList=[left_key, right_key], waitRelease=False)
            if len(key_list) > 0:
                responded_retr = True
                thisResp = key_list[0]
                if thisResp.name == left_key:
                    chosenPos = [-0.05, 0]
                    order_resp_meaning = opt_left
                elif thisResp.name == right_key:
                    chosenPos = [0.05, 0]
                    order_resp_meaning = opt_right
                resp.keys = thisResp.name
                resp.rt = thisResp.rt
                resp.duration = thisResp.duration
                resp.corr = 1 if thisResp.name == correct_key else 0

                # flip-locked onset of the response keyboard
                t_kb_start = resp.tStartRefresh
                if t_kb_start is None:
                    t_kb_start = resp.clock.getLastResetTime()
                    print(f"[bids] WARNING: resp.tStartRefresh was None (retr_order), "
                          f"using clock reset {t_kb_start:.6f}, frameN={frameN}")
                order_press_onset = t_kb_start + thisResp.rt

                polygon_6.setPos(chosenPos)
                polygon_6.setOpacity(1.0)
                delayClock = core.Clock()

        if responded_retr and not delayDone and delayClock is not None and delayClock.getTime() >= 0.1:
            delayDone = True
            continueRoutine = False

        if retrClock.getTime() >= (retr_dur-1) and not responded_retr:
            chooseNowText_2.setOpacity(1)
    TextComponent chooseNowText_2
      font = $font_name
      letterHeight = 0.025
      opacity [set every repeat] = 0
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Bitte antworten Sie jetzt
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    KeyboardComponent resp
      allowedKeys = left_key, right_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur
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    CodeComponent bids_retr_response
      Code Type = Auto->JS
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      End Routine:
        # response neeeds to be saved at end of trial
        pressed = resp.keys
        if isinstance(pressed, list):
            pressed = pressed[-1] if pressed else "m"

        chosen_pos  = key2pos.get(pressed, None)
        is_correct = (str(chosen_pos) == str(correct_key))
        # changed!!
        bids.add_instant(
        "choice",
        onset=order_press_onset,
        distance_correct = distance_correct,
        trial_type = "retr_order",
        block_name=block,
        sequence_name=learningSeq,
        trial_num=retrieval_trials.thisN,
        response=(resp.keys if responded_retr else "m"),
        response_time=(resp.rt if responded_retr else None),
        correct=is_correct,
        expected_response = correct_key,
        response_meaning=order_resp_meaning,

        )
    CodeComponent set_trigger_retr_response
      Code Type = Auto->JS
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      Begin Routine:
        retr_trig_sent = False
      Each Frame:
        RespTrig = trigger_dict["order_retrieval_response"]
        if not retr_trig_sent and resp.keys:
            retr_trig_sent = True
            bids.trigger(RespTrig, label="order_response", on_flip=False,
                         block_name=block, sequence_name=learningSeq,
                         trial_num=retrieval_trials.thisN)
            core.wait(0.01) # need to wait a bit to avoid overlap with question trigger
  Routine retr_response_distance
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    CodeComponent set_trigger_opt_onset_2
      Code Type = Auto->JS
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      Each Frame:
        OptTrig = trigger_dict["distance_retrieval_options"]

        if frameN == 0:
            bids.trigger(OptTrig, stim=opt_2, label="distance_options")
            core.wait(0.01)
    CodeComponent clear_clock_4
      Code Type = Py
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      Begin Routine:
        _resp_4_allKeys = None
        resp_4.clearEvents()
        retrClock = core.Clock()
        retrClock.reset()
    CodeComponent controlslider_pos_js
      Code Type = Py
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      Begin Routine:
        responded_retr_slider = False
        delayClock = None
        delayDone = False
        chosenDis = None
        is_correct = False
        chosen_num = None
        dist_press_onset = None
      Each Frame:
        #if slider_main.markerPos is None:
            #possible_positions = [0, 1, 2, 3, 4]
            #slider_main.markerPos = random.choice(possible_positions)

        #slider_main.markerPos = max(0, min(4, slider_main.markerPos))

        # only poll once the component has started AND its flip callbacks have run
        if resp_4.status == STARTED and resp_4.tStartRefresh is not None:
            keysPressed = resp_4.getKeys(keyList=[left_key, right_key, center_key, down_key], waitRelease=False)
        else:
            keysPressed = []

        if len(keysPressed) > 0 and not responded_retr_slider:
            chosen_key = keysPressed[0]
            if chosen_key.name == left_key:
                chosenDis = 5
                opt_5.color = "blue"
            elif chosen_key.name == right_key:
                chosenDis = 3
                opt_3.color = "blue"
            elif chosen_key.name == center_key:
                chosenDis = 2
                opt_2.color = "blue"
            elif chosen_key.name == down_key:
                chosenDis = 4
                opt_4.color = "blue"

            resp_4.keys = chosenDis
            resp_4.rt = chosen_key.rt
            resp_4.duration = chosen_key.duration
            resp_4.corr = 1 if chosenDis == distance_correct else 0

            t_kb_start = resp_4.tStartRefresh
            if t_kb_start is None:
                t_kb_start = resp_4.clock.getLastResetTime()
                print(f"[bids] WARNING: resp_4.tStartRefresh was None (retr_distance), "
                      f"using clock reset {t_kb_start:.6f}, frameN={frameN}")
            dist_press_onset = t_kb_start + chosen_key.rt

            responded_retr_slider = True
            delayClock = core.Clock()

        if responded_retr_slider and not delayDone and delayClock is not None and delayClock.getTime() >= 0.1:
            delayDone = True
            continueRoutine = False

        if not responded_retr_slider and retrClock.getTime() >= (retr_dur_slider-1):
            chooseNowText_3.setOpacity(1)

        if retrClock.getTime() >= retr_dur_slider and not responded_retr_slider:
            continueRoutine = False
    SliderComponent slider_main
      disabled = True
      fillColor [set every repeat] = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0.25
      labels = "0","1","2","3","4"
      letterHeight = 0.04
      size = (0.5, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = [0,1,2,3,4]
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    TextComponent chooseNowText_3
      font = $font_name
      letterHeight = 0.025
      opacity [set every repeat] = 0
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      text = Bitte antworten Sie jetzt
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    KeyboardComponent resp_4
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = retr_dur_slider
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    TextComponent opt_2
      color [set every repeat] = white
      font = $font_name
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      text = 2
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    TextComponent opt_3
      color [set every repeat] = white
      font = $font_name
      letterHeight = 0.03
      pos = (0.05, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      text = 3
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    TextComponent opt_4
      color [set every repeat] = white
      font = $font_name
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      text = 4
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    TextComponent opt_5
      color [set every repeat] = white
      font = $font_name
      letterHeight = 0.03
      pos = (-0.05,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = retr_dur_slider
      text = 5
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    CodeComponent set_trigger_retr_response_2
      Code Type = Auto->JS
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      Begin Routine:
        retr_trig_sent = False
      Each Frame:
        RespTrig = trigger_dict["distance_retrieval_response"]
        if not retr_trig_sent and resp_4.keys:
            retr_trig_sent = True
            bids.trigger(RespTrig, label="distance_response", on_flip=False,
                         block_name=block, sequence_name=learningSeq,
                         trial_num=retrieval_trials.thisN)
            core.wait(0.01) # need to wait a bit to avoid overlap with question trigger
    CodeComponent bids_retr_response_2
      Code Type = Auto->JS
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      End Routine:
        # response neeeds to be saved at end of trial
        if resp_4.keys:

            chosen_num = chosenDis
            is_correct = (chosen_num == distance_correct)

        bids.add_instant(
        "choice",
        onset=dist_press_onset,
        distance_correct=distance_correct,
        trial_type="retr_distance",
        block_name=block,
        sequence_name=learningSeq,
        trial_num=retrieval_trials.thisN,
        response=(chosenDis if responded_retr_slider else "m"),
        response_time=(resp_4.rt if responded_retr_slider else None),
        correct=is_correct,
        expected_response = distance_correct,
        response_meaning = chosenDis
        )
  Routine too_slow_routine_1
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    CodeComponent determine_start_4
      Code Type = Auto->JS
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      Begin Routine:
        if responded_retr:
            continueRoutine = False
    TextComponent tooSlowtext_4
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = too_slow_dur
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    CodeComponent set_slow_msg_text_4
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            tooSlowtext_4.text = (
                "Too slow. You need to respond faster."
            )

        if language == "german":
            tooSlowtext_4.text = (
                "Zu langsam. Sie müssen schneller antworten."
            )

        if language == "french":
            tooSlowtext_4.text = (
                "Trop lent. Vous devez répondre plus rapidement. "
            )
  Routine instruction_retrievalques1
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    TextComponent instruction_part10
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_part7_text_3
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part10.text = (
           "Retrieval Part 1: Order\n\n"
        "After seeing the two images, your first task is to indicate\n"
        "if the two images were presented in the learned sequence\n"
        "in the presented order or not.\n\n"
        "Press any key to continue."
        )


        if language == "german":
            instruction_part10.text = (
        "Abruf Teil 1: Reihenfolge\n\n"
        "Nach der Präsentation der beiden Bilder geben Sie an,\n"
        "ob sie in der gelernten Sequenz in dieser Reihenfolge\n"
        "vorkamen.\n\n"
        "Drücken Sie eine beliebige Taste, um fortzufahren."
        )
    KeyboardComponent continue_button_10
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine instruction_retrievalques2
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    TextComponent instruction_part11
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_part7_text_4
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part11.text = (
        "Retrieval Part 2: Distance\n\n"
        "After the order question, indicate\n"
        "how far apart the two images are\n"
        "in the sequence.\n\n"
        "Possible distances range from 2 to 5.\n\n"
        "Press any key to continue."
        )


        if language == "german":
            instruction_part11.text = (
        "Abruf Teil 2: Distanz\n\n"
        "Nach der Frage zur Reihenfolge geben Sie an,\n"
        "wie weit die beiden Bilder in der Sequenz voneinander\n"
        "entfernt sind.\n\n"
        "Die möglichen Distanzen reichen von 2 bis 5.\n\n"
        "Drücken Sie eine beliebige Taste, um fortzufahren."


        )
    KeyboardComponent continue_button_11
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine instruction_refl_period
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    TextComponent instruction_part12
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_part7_text_5
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part12.text = (
           "Retrieval: Reflection Period\n\n"
        "Before answering the order and distance questions,\n"
        "a fixation cross will briefly appear.\n\n"
        "Press any button to continue."

        )


        if language == "german":
            instruction_part12.text = (
        "Abruf: Reflexionsperiode\n\n"
        "Bevor Sie die Fragen zur Reihenfolge und Distanz\n"
        "beantworten, erscheint kurz ein Fixationskreuz.\n\n"
        "Drücken Sie eine beliebige Taste, um fortzufahren."


        )
    KeyboardComponent continue_button_14
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine instruction_retr_start
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    TextComponent instruction_now_retr
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent set_instruction_now_retr_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_now_retr.text = (
            "You will now retrieve the learned associations.")

        if language == "german":
            instruction_now_retr.text = (
            "Sie werden nun die gelernten\n"
            "Assoziationen abrufen.")
    KeyboardComponent continue_button_18
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      store = first key
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  Routine rest_practice
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    TextComponent fix_cross_2
      font = $font_name
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = replay_break_dur
      text = +
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    TextComponent rest_instruction
      font = $font_name
      letterHeight = 0.025
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = replay_break_dur
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    CodeComponent set_text_rest_instruction
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            rest_instruction.text = (
            "Short Break. Please wait,\n"
            "this is not a rest break.")

        if language == "german":
            rest_instruction.text = (
            "Kurze Pause. Bitte warten Sie.\n"
            "Dies ist keine Ruhepause")
  Routine instruction_retrievalques1_02
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    TextComponent instruction_part13
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_part13_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part13.text = (
        "For this, use the left (green) and right (blue) button\n."
        "The assignment of correct / incorrect to left / right can change, so please\n"
        "check on the screen which side corresponds to correct / incorrect on this trial.\n\n"
        "Press any key to continue."
        )


        if language == "german":
            instruction_part13.text = (
        "Wählen Sie „Ja“ oder „Nein“ mit der linken\n"
        "grünen oder rechten blauen Taste. Die Zuordnung\n"
        "wechselt zwischen den Durchgängen. Beachten Sie daher\n"
        "die Anzeige auf dem Bildschirm.\n\n"
        "Drücken Sie eine beliebige Taste, um fortzufahren."
        )
    KeyboardComponent continue_button_19
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine instruction_retrievalques2_02
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    TextComponent instruction_part14
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_part14_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part14.text = (
        "At distance 2, there is one image in between,\n"
        "and at distance 5, there are four images in between.\n\n"
        "Respond using the four buttons.\n"
        "The corresponding button assignments will be shown on the screen.\n\n"
        "Press any key to continue."
        )


        if language == "german":
            instruction_part14.text = (
        "Bei Distanz 2 liegt ein Bild dazwischen,\n"
        "bei Distanz 5 liegen vier Bilder dazwischen.\n\n"
        "Antworten Sie mit den vier Tasten.\n"
        "Die jeweilige Tastenbelegung wird auf dem Bildschirm angezeigt.\n\n"
        "Drücken Sie eine beliebige Taste, um fortzufahren."


        )
    KeyboardComponent continue_button_20
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine instruction_refl_period_02
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    TextComponent instruction_part15
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_part15_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part15.text = (
           "During this time, already consider whether the images\n"
        "appeared in this order and how far apart they are\n"
        "in the sequence.\n\n"
        "This is important because the time available for the\n"
        "subsequent responses is short.\n\n"
        "Press any key to continue."
        )


        if language == "german":
            instruction_part15.text = (
        "Überlegen Sie in dieser Zeit bereits, ob die Bilder\n"
        "in dieser Reihenfolge vorkamen und wie weit sie in\n"
        "der Sequenz voneinander entfernt sind.\n\n"
        "Dies ist wichtig, da die Zeit für die anschließenden\n"
        "Antworten kurz ist.\n\n"
        "Drücken Sie eine beliebige Taste, um fortzufahren."


        )
    KeyboardComponent continue_button_21
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine instructions_replay_break
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    TextComponent instructions_part16
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_read_dur
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    CodeComponent instruction_part16_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions_part16.text = (
        "After each learning run, there will be short waiting periods, in which you will see a fixation cross.\n"
        "These periods are not a break. Please just wait for a short moment, but don't take a break.\n\n"
        "Press any key to start practicing the learning trials"
        )


        if language == "german":
            instructions_part16.text = (
        "Nach jedem Lerndurchlauf erscheint für kurze Zeit\n"
        "ein Fixationskreuz.\n\n"
        "Diese Wartezeit ist keine Pause.\n"
        "Bitte bleiben Sie weiterhin ruhig sitzen und schauen\n"
        "Sie auf das Fixationskreuz.\n\n"
        "Drücken Sie eine beliebige Taste, um das Lernen zu üben."

        )
    KeyboardComponent continue_button_22
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = max_read_dur
      store = first key
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  Routine show_context
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    ImageComponent scene_image
      image [set every repeat] = $context_img_block
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine after_block_rest
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    TextComponent fix_cross_3
      font = $font_name
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = after_block_restdur
      text = +
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    CodeComponent set_trigger_rest_2
      Code Type = Auto->JS
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      Begin Routine:
        replay_blocktrig_sent = False
      Each Frame:
        replayblockTrigger = 90
        if frameN == 0:
            bids.trigger(replayblockTrigger, stim=fix_cross_3, label="replay_break_endblock")
      End Routine:
        replayblock_endTrigger = 91
        if not replay_blocktrig_sent:
            bids.trigger(replayblock_endTrigger, label="replay_break_endblock_end", on_flip=False)
            replay_blocktrig_sent = True
    CodeComponent bids_break_logging_2
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame
        bids.schedule_onset(
            fix_cross_3,
            type_of_stimulus="replay_break_endblock",
            block_name = block,
            route_num=runIndexWithinSeq,
            component_label="fix_cross_replay_break_endblock",
            trial_type = "break")
      End Routine:
        # log offset at last frame of routine

        bids.mark_offset(fix_cross_3)
  Routine after_block_break
    CodeComponent determine_break_start_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        continueRoutine = Block.thisN is in [1,2,3]

        if continueRoutine:
            run_break = True
        else:
            run_break = False
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    CodeComponent bids_longbreak_logging_2
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame

        bids.schedule_onset(text_break_block,
            trial_type = "break",
            type_of_stimulus="postblock_break",
            block_name = block,
            component_label="instruction_break_block")
      End Routine:
        # log offset at last frame of routine

        bids.mark_offset(text_break_block)
    CodeComponent trigger_long_break_start_2
      Code Type = Auto->JS
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      Begin Routine:
        end_trig_send = False
      Each Frame:
        # break start
        break_start_trig = trigger_dict["task_break_begin"]
        if frameN == 0:
            bids.trigger(break_start_trig, stim=text_break_block, label="instruction_break_block")
      End Routine:
        # send trigger for end break
        break_end_trig = trigger_dict["task_break_end"]
        if run_break and not end_trig_send:
            bids.trigger(break_end_trig, label="end_break_block", on_flip=False)
            end_trig_send = True
            core.wait(0.01) # wait so no overlap with next img trigger
    TextComponent text_break_block
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_durafter_block_break
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    CodeComponent set_blockbreak_text
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":
            text_break_block.text = (
            "This ia a task break.\n"
            "You can relax for as long as you need\n\n"
            "If you are ready to continue, please press any button."
            )

        if language=="german":
            text_break_block.text = (
            "Die Pause hat begonnen.\n"
            "Sie können sich so lange ausruhen, wie sie es brauchen\n\n"
            "Wenn Sie bereit sind, weiterzumachen, drücken Sie bitte eine beliebige Taste.")
    KeyboardComponent continue_button_23
      allowedKeys = left_key, right_key, center_key, down_key
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = max_durafter_block_break
      store = first key
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Flow
  Routine startup_settings
  Routine instructions_01
  Routine instructions_02
  Routine instructions_03
  Routine instructions_04
  Routine instructions_05
  Routine instructions_06
  Routine instructions_replay_break
  LoopInitiator practice_learning loopType="TrialHandler"
    conditionsFile = sequences/main_trials_prc.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'promptFile': 'stimuli/practice_images/anchor.jpg', 'correctFile': 'stimuli/practice_images/cow.jpg', 'dist_01File': 'stimuli/practice_images/bread.jpg', 'dist_02File': 'stimuli/practice_images/plane.jpg', 'correct_pos': 'right', 'dist01_pos': 'left', 'dist02_pos': 'center', 'correct_ans': 'right'},
      {'promptFile': 'stimuli/practice_images/cow.jpg', 'correctFile': 'stimuli/practice_images/ant.jpg', 'dist_01File': 'stimuli/practice_images/banana.jpg', 'dist_02File': 'stimuli/practice_images/glasses.jpg', 'correct_pos': 'left', 'dist01_pos': 'right', 'dist02_pos': 'center', 'correct_ans': 'left'},
      {'promptFile': 'stimuli/practice_images/ant.jpg', 'correctFile': 'stimuli/practice_images/basket.jpg', 'dist_01File': 'stimuli/practice_images/axe.jpg', 'dist_02File': 'stimuli/practice_images/duck.jpg', 'correct_pos': 'center', 'dist01_pos': 'left', 'dist02_pos': 'right', 'correct_ans': 'up'},
      {'promptFile': 'stimuli/practice_images/basket.jpg', 'correctFile': 'stimuli/practice_images/bed.jpg', 'dist_01File': 'stimuli/practice_images/belt.jpg', 'dist_02File': 'stimuli/practice_images/bread.jpg', 'correct_pos': 'center', 'dist01_pos': 'right', 'dist02_pos': 'left', 'correct_ans': 'up'},
      {'promptFile': 'stimuli/practice_images/bed.jpg', 'correctFile': 'stimuli/practice_images/belt.jpg', 'dist_01File': 'stimuli/practice_images/anchor.jpg', 'dist_02File': 'stimuli/practice_images/desk.jpg', 'correct_pos': 'left', 'dist01_pos': 'center', 'dist02_pos': 'right', 'correct_ans': 'left'}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
    Routine practice_choice_display
    Routine practice_feedback
    Routine practice_too_slow_routine
  LoopTerminator practice_learning
  Routine rest_practice
  Routine instruction_retrieval_trials
  Routine instruction_retrievalques1
  Routine instruction_retrievalques1_02
  Routine instruction_retrievalques2
  Routine instruction_retrievalques2_02
  Routine instruction_refl_period
  Routine instruction_refl_period_02
  Routine retrieval_backg_info
  Routine instruction_practice_type1
  LoopInitiator retrieval_prc_loop loopType="TrialHandler"
    conditionsFile = sequences/retr_trials_prc_03.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trial_type': 3, 'img_first': 'stimuli/practice_images/cow.jpg', 'img_second': 'stimuli/practice_images/basket.jpg', 'img_third': None, 'opt_left': 'yes', 'opt_right': 'no', 'correct_side': 'left', 'correct_key': 'left', 'distance_correct': 2, 'image_dur_retr': 2, 'fix_dur_retr': 0.5, 'ImageExamplePath': 'stimuli/practice_images/practice_sequence_overview_t3_01.jpg', 'iti_dur_retr': 0.45, 'reflection_win_dur': 1.95},
      {'trial_type': 3, 'img_first': 'stimuli/practice_images/cow.jpg', 'img_second': 'stimuli/practice_images/belt.jpg', 'img_third': None, 'opt_left': 'no', 'opt_right': 'yes', 'correct_side': 'right', 'correct_key': 'right', 'distance_correct': 4, 'image_dur_retr': 2, 'fix_dur_retr': 0.5, 'ImageExamplePath': 'stimuli/practice_images/practice_sequence_overview_t3_02.jpg', 'iti_dur_retr': 0.52, 'reflection_win_dur': 1.89},
      {'trial_type': 3, 'img_first': 'stimuli/practice_images/belt.jpg', 'img_second': 'stimuli/practice_images/ant.jpg', 'img_third': None, 'opt_left': 'yes', 'opt_right': 'no', 'correct_side': 'right', 'correct_key': 'up', 'distance_correct': 3, 'image_dur_retr': 2, 'fix_dur_retr': 0.5, 'ImageExamplePath': 'stimuli/practice_images/practice_sequence_overview_t3_03.jpg', 'iti_dur_retr': 0.61, 'reflection_win_dur': 2.15}]
    LoopInitiator retry_loop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 999
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      Routine retrieval_type1_practice
      Routine first_image_prc
      Routine mask_retr1_prc
      Routine second_image_prc
      Routine mask_retr2_prc
      Routine reflection_period
      Routine retr_response_order_prc
      Routine retr_response_distance_prc
      Routine retr_response_feedback
    LoopTerminator retry_loop
  LoopTerminator retrieval_prc_loop
  Routine instructions_07
  LoopInitiator Block loopType="TrialHandler"
    conditionsFile = sequences/block_conditions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'condFileLearning': 'sequences/learning_block1_fixed-middle-10_0{participant_ID}.xlsx', 'condFileRetrieval': 'sequences/retrieval_block1_fixed-middle-10_0{participant_ID}.xlsx', 'n_routes_block': 6},
      {'condFileLearning': 'sequences/learning_block2_fixed-middle-10_0{participant_ID}.xlsx', 'condFileRetrieval': 'sequences/retrieval_block2_fixed-middle-10_0{participant_ID}.xlsx', 'n_routes_block': 4},
      {'condFileLearning': 'sequences/learning_block3_fixed-middle-10_0{participant_ID}.xlsx', 'condFileRetrieval': 'sequences/retrieval_block3_fixed-middle-10_0{participant_ID}.xlsx', 'n_routes_block': 4},
      {'condFileLearning': 'sequences/learning_block4_fixed-middle-10_0{participant_ID}.xlsx', 'condFileRetrieval': 'sequences/retrieval_block4_fixed-middle-10_0{participant_ID}.xlsx', 'n_routes_block': 4}]
    Routine reset_rows_to_select
    LoopInitiator miniblocks loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = n_routes_block
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      conditions:
        [{'trivia_text_this_rpt': 'Welche Währung hat Japan?', 'correct_answer_trivia': 'Yen'},
        {'trivia_text_this_rpt': 'Wie heißt die Hauptstadt von Kanada?', 'correct_answer_trivia': 'Ottawa'},
        {'trivia_text_this_rpt': 'Wie heißt das berühmte Tor in Berlin?', 'correct_answer_trivia': 'Brandenburger Tor'},
        {'trivia_text_this_rpt': 'Wie heißt der größte Ozean der Erde?', 'correct_answer_trivia': 'Pazifik'},
        {'trivia_text_this_rpt': 'Welche Sprache spricht man in Brasilien?', 'correct_answer_trivia': 'Portugiesisch'},
        {'trivia_text_this_rpt': 'Wie heißt der längste Fluss der Welt?', 'correct_answer_trivia': 'Nil'},
        {'trivia_text_this_rpt': 'Welches Tier ist das schnellste an Land?', 'correct_answer_trivia': 'Gepard'},
        {'trivia_text_this_rpt': 'Welches Metall hat das Symbol Fe?', 'correct_answer_trivia': 'Eisen'},
        {'trivia_text_this_rpt': 'Welcher Planet ist der Rote Planet?', 'correct_answer_trivia': 'Mars'},
        {'trivia_text_this_rpt': 'Welches Tier ist das größte Säugetier?', 'correct_answer_trivia': 'Blauwal'},
        {'trivia_text_this_rpt': 'Welche Farbe entsteht aus Blau und Gelb?', 'correct_answer_trivia': 'Grün'},
        {'trivia_text_this_rpt': 'Wer entdeckte Amerika 1492?', 'correct_answer_trivia': 'Kolumbus'},
        {'trivia_text_this_rpt': 'Welche Einheit misst elektrische Spannung?', 'correct_answer_trivia': 'Volt'},
        {'trivia_text_this_rpt': 'Welcher Planet hat die meisten Ringe?', 'correct_answer_trivia': 'Saturn'},
        {'trivia_text_this_rpt': 'Welches Gas brauchen wir zum Atmen?', 'correct_answer_trivia': 'Sauerstoff'}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
      Routine set_learning_rows
      Routine show_context
      LoopInitiator learning_trials loopType="TrialHandler"
        Selected rows = $selected_rows
        conditionsFile = $cond_file_learning
        loopType = sequential
        nReps = 1
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        conditions:
          [{'block': 'A', 'learningSeq': 'A', 'runIndexWithinSeq': 1, 'currPosInSeq': 1, 'promptFile': 'stimuli/key/key_14.jpg', 'correctFile': 'stimuli/pencil/pencil_12.jpg', 'dist_01File': 'stimuli/dog/dog_03.jpg', 'dist_02File': 'stimuli/ball/ball_14.jpg', 'promptConcept': 'key', 'correctConcept': 'pencil', 'dist01Concept': 'dog', 'dist02Concept': 'ball', 'correct_pos': 'left', 'dist01_pos': 'center', 'dist02_pos': 'right', 'dist01_diff': 0.58, 'dist02_diff': 0.47, 'correct_ans': 'left', 'pairTargetPosInSeq': 2, 'promptTrigNumber': 15, 'correctTrigNumber': 16, 'dist01TrigNumber': 5, 'dist02TrigNumber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,
          {'block': 'A', 'learningSeq': 'A', 'runIndexWithinSeq': 1, 'currPosInSeq': 2, 'promptFile': 'stimuli/pencil/pencil_12.jpg', 'correctFile': 'stimuli/hammer/hammer_14.jpg', 'dist_01File': 'stimuli/hand/hand_36.jpg', 'dist_02File': 'stimuli/phone/phone_03.jpg', 'promptConcept': 'pencil', 'correctConcept': 'hammer', 'dist01Concept': 'hand', 'dist02Concept': 'phone', 'correct_pos': 'center', 'dist01_pos': 'right', 'dist02_pos': 'left', 'dist01_diff': 0.47, 'dist02_diff': 0.31, 'correct_ans': 'center', 'pairTargetPosInSeq': 3, 'promptTrigNumber': 16, 'correctTrigNumber': 7, 'dist01TrigNumber': 8, 'd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,
          {'block': 'A', 'learningSeq': 'A', 'runIndexWithinSeq': 1, 'currPosInSeq': 3, 'promptFile': 'stimuli/hammer/hammer_14.jpg', 'correctFile': 'stimuli/bread/bread_07.jpg', 'dist_01File': 'stimuli/jacket/jacket_38.jpg', 'dist_02File': 'stimuli/house/house_12.jpg', 'promptConcept': 'hammer', 'correctConcept': 'bread', 'dist01Concept': 'jacket', 'dist02Concept': 'house', 'correct_pos': 'left', 'dist01_pos': 'center', 'dist02_pos': 'right', 'dist01_diff': 0.75, 'dist02_diff': 0.42, 'correct_ans': 'left', 'pairTargetPosInSeq': 4, 'promptTrigNumber': 7, 'correctTrigNumber': 3, 'dist01TrigNumber': 10, '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,
          {'block': 'A', 'learningSeq': 'A', 'runIndexWithinSeq': 1, 'currPosInSeq': 4, 'promptFile': 'stimuli/bread/bread_07.jpg', 'correctFile': 'stimuli/chair/chair_06.jpg', 'dist_01File': 'stimuli/ball/ball_14.jpg', 'dist_02File': 'stimuli/guitar/guitar_02.jpg', 'promptConcept': 'bread', 'correctConcept': 'chair', 'dist01Concept': 'ball', 'dist02Concept': 'guitar', 'correct_pos': 'right', 'dist01_pos': 'left', 'dist02_pos': 'center', 'dist01_diff': 0.64, 'dist02_diff': 0.36, 'correct_ans': 'right', 'pairTargetPosInSeq': 5, 'promptTrigNumber': 3, 'correctTrigNumber': 4, 'dist01TrigNumber': 1, 'dist02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
        Routine choice_display
        Routine feedback
        Routine too_slow_routine
      LoopTerminator learning_trials
      Routine rest_period
      Routine instruction_retr_start
      Routine set_retrieval_rows
      LoopInitiator retrieval_trials loopType="TrialHandler"
        Selected rows = $selected_rows[0:-1:2]
        conditionsFile = $cond_file_retrieval
        loopType = sequential
        nReps = 1
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        conditions:
          [{'trial_type': 1, 'learningSeq': 'A', 'block': 'block1', 'runIndexWithinSeq': 0, 'miniblockWithinRun': 0, 'img_first': 'stimuli/house/house_12.jpg', 'img_second': 'stimuli/hand/hand_36.jpg', 'img_third': None, 'opt_left': 'yes', 'opt_right': 'no', 'correct_side': 'right', 'correct_key': 'right', 'is_yes': 0, 'distance_correct': 1, 'image_dur_retr': 1.2, 'fix_dur_retr': 0.2, 'routeIndexWithinBlock': 0, 'seqOfRoute': 'A'},
          {'trial_type': 3, 'learningSeq': 'A', 'block': 'block1', 'runIndexWithinSeq': 0, 'miniblockWithinRun': 0, 'img_first': 'stimuli/house/house_12.jpg', 'img_second': 'stimuli/hand/hand_36.jpg', 'img_third': None, 'opt_left': None, 'opt_right': None, 'correct_side': None, 'correct_key': 2.0, 'is_yes': None, 'distance_correct': 1, 'image_dur_retr': 2, 'fix_dur_retr': 0.5, 'routeIndexWithinBlock': 0, 'seqOfRoute': 'A'},
          {'trial_type': 1, 'learningSeq': 'A', 'block': 'block1', 'runIndexWithinSeq': 0, 'miniblockWithinRun': 0, 'img_first': 'stimuli/flower/flower_04.jpg', 'img_second': 'stimuli/dog/dog_03.jpg', 'img_third': None, 'opt_left': 'yes', 'opt_right': 'no', 'correct_side': 'right', 'correct_key': 'right', 'is_yes': 0, 'distance_correct': 3, 'image_dur_retr': 1.2, 'fix_dur_retr': 0.2, 'routeIndexWithinBlock': 0, 'seqOfRoute': 'A'},
          {'trial_type': 3, 'learningSeq': 'A', 'block': 'block1', 'runIndexWithinSeq': 0, 'miniblockWithinRun': 0, 'img_first': 'stimuli/flower/flower_04.jpg', 'img_second': 'stimuli/dog/dog_03.jpg', 'img_third': None, 'opt_left': None, 'opt_right': None, 'correct_side': None, 'correct_key': 4.0, 'is_yes': None, 'distance_correct': 3, 'image_dur_retr': 2, 'fix_dur_retr': 0.5, 'routeIndexWithinBlock': 0, 'seqOfRoute': 'A'}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
        Routine retr_ITI
        Routine first_image
        Routine mask_retr1
        Routine second_image
        Routine mask_retr2
        Routine reflection_period_retr
        Routine retr_response_order
        Routine too_slow_routine_1
        Routine retr_response_distance
        Routine too_slow_routine_2
      LoopTerminator retrieval_trials
      Routine instructions_new_learn
    LoopTerminator miniblocks
    Routine after_block_rest
    Routine after_block_break
  LoopTerminator Block
  Routine instructions_end
