PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TSRlearn_resting-state_pre-post
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine resting_state
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    TextComponent fix_cross_break
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rest_dur
      text = +
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    CodeComponent set_trigger_endexp
      Code Type = Auto->JS
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      End Experiment:
        bids.trigger(trigger_numbers_dict["start/end"], label="exp_end", on_flip=False)
    CodeComponent set_trigger_reststate
      Code Type = Auto->JS
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      Begin Routine:
        bids.trigger(trigger_numbers_dict["rest state start"], label="rest_start", on_flip=False)
      End Routine:
        bids.trigger(trigger_numbers_dict["rest state end"], label="rest_end", on_flip=False)
  Routine exp_settings
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    CodeComponent functions_imports
      Code Type = Auto->JS
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      Begin Experiment:
        # log function that saves variables to log file
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)


        import meg_triggers
        from meg_triggers import send_trigger
        meg_triggers.set_default_duration(0.005)
        meg_triggers.set_default_reset_value(0)  # set the value the trigger channel returns to for neutral state
        meg_triggers.enable_printing()
    CodeComponent exp_settings
      Code Type = Auto->JS
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      Before Experiment:
        # response - key mapping
        left_key = 'g'
        right_key = 'b'
        center_key = 'r'
        down_key = 'y'

        possible_keys = [left_key, right_key, center_key, down_key]

        # language for instruction
        language = 'german' # 'english', 'french' or 'german'

        font_name = "Sans Sherif"

        rest_dur = 300
    CodeComponent bids_logging_functions
      Code Type = Auto->JS
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      Begin Experiment:
        # --- BIDS event logger with trigger logging ---
        # Drop-in replacement for the 'Begin Experiment' code of `bids_logging_functions`.
        #
        # Time base: everything is globalClock, the same clock win.getFutureFlipTime()
        # uses, so tStartRefresh and trigger timestamps are directly comparable.
        # Onsets are expressed relative to t0 (logger creation), so they start near 0.

        from pathlib import Path
        import csv
        import atexit

        import numpy as np

        # NOTE: do NOT import STARTED / FINISHED / core here.
        # Builder pastes this block inside run(), so an import would make those names
        # local to run() and break `thisExp.status = STARTED` at the top of the
        # function (UnboundLocalError). They are already available module-level.


        class BIDSLogger:
            def __init__(self, win, clock, default_cols=None,
                         send_fn=None, log_trigger_rows=True):
                """
                win              : the PsychoPy window (needed for callOnFlip)
                clock            : globalClock - MUST be the same clock the window uses
                send_fn          : the actual trigger function, e.g. meg_triggers.send_trigger
                log_trigger_rows : if True, every trigger also gets its own row
                """
                self.win = win
                self.clock = clock
                self.send_fn = send_fn
                self.log_trigger_rows = log_trigger_rows

                self.rows = []
                self.active = {}      # stim -> row index (open, awaiting offset)
                self.pending = {}     # stim -> trigger fired before its row existed
                self.defaults = default_cols or {}
                if clock is None:
                    raise ValueError("BIDSLogger needs the clock used by the window "
                                     "(globalClock), otherwise onsets and triggers "
                                     "end up on different time bases.")
                self.t0 = self.now()

                self.col_order = [
                    "subject", "block_num", "trial_num",
                    "component_label", "onset", "duration",
                    "type_of_stimulus", "concept_label",
                    "concept_examplar",
                    "trigger_value", "trigger_onset", "trigger_delay",
                    "response_time", "press_onset_est", "response",
                    "expected_response", "wrd_img_match",
                    "correct",
                ]

            # ------------------------------------------------------------ timing --
            def now(self):
                """
                Current time on the SAME clock as tStartRefresh.

                tStartRefresh comes from win.getFutureFlipTime(clock=None), which
                returns times on logging.defaultClock - and run() sets that to
                globalClock. Using core.getTime() here instead would be offset by the
                gap between PsychoPy import and globalClock creation (dialog + window
                setup), which can be tens of seconds.

                format='float' is required because globalClock is created with an ISO
                strftime format, so a bare getTime() returns a string.
                """
                return float(self.clock.getTime(format='float'))

            def _rel(self, t):
                """Convert absolute time to onset relative to experiment start."""
                return float(t - self.t0)

            # ------------------------------------------------------- stimulus log --
            def schedule_onset(self, stim, **extra_cols):
                """Call every frame; logs on the first frame the stim is STARTED."""
                if getattr(stim, "status", None) == STARTED and stim not in self.active:
                    t_on = getattr(stim, "tStartRefresh", None)
                    if t_on is None:
                        t_on = self.now()

                    row = {"onset": self._rel(t_on), "duration": np.nan}
                    row.update(self.defaults)
                    row.update(extra_cols)

                    # a trigger for this stim may have fired before the row existed
                    trig = self.pending.pop(stim, None)
                    if trig is not None:
                        self._attach_trigger(row, trig["value"], trig["t"])

                    self.rows.append(row)
                    self.active[stim] = len(self.rows) - 1

            def mark_offset(self, stim):
                """Call in End Routine; closes the row and computes duration."""
                if getattr(stim, "status", None) == FINISHED and stim in self.active:
                    idx = self.active.pop(stim)
                    t_off = getattr(stim, "tStopRefresh", None)
                    if t_off is None:
                        t_off = self.now()
                    self.rows[idx]["duration"] = self._rel(t_off) - self.rows[idx]["onset"]
                else:
                    # stim never finished cleanly (e.g. routine force-ended):
                    # drop it from active so the next trial can reopen it
                    self.active.pop(stim, None)

            def close_trial(self):
                """
                Call in the End Routine of the last routine of each trial (ITI).

                Some components never reach FINISHED - e.g. spoken_word, when the
                routine is ended by the feedback logic before the audio has played
                out. Without this, they stay in `active` forever and every later
                schedule_onset() for them is silently skipped.
                """
                t_now = self.now()
                for stim, idx in list(self.active.items()):
                    if np.isnan(self.rows[idx].get("duration", np.nan)):
                        # component was cut short: mark duration up to now, and flag it
                        self.rows[idx]["duration"] = self._rel(t_now) - self.rows[idx]["onset"]
                        self.rows[idx]["truncated"] = 1
                self.active.clear()
                # a trigger queued for a stim whose row never appeared would otherwise
                # be back-filled onto the *next* trial's row
                self.pending.clear()

            def add_instant(self, trial_type, onset=None, **extra_cols):
                """
                One-shot event with no duration, e.g. a button press.

                onset : absolute time on self.clock. Pass this for anything logged
                        later than it happened - a response logged in End Routine
                        should use key_resp.tStartRefresh + key_resp.rt, not the
                        time End Routine happens to run.
                """
                t = self.now() if onset is None else float(onset)
                row = {"onset": self._rel(t), "duration": 0.0,
                       "type_of_stimulus": trial_type}
                row.update(self.defaults)
                row.update(extra_cols)
                self.rows.append(row)

            # -------------------------------------------------------- trigger log --
            def trigger(self, value, stim=None, label=None, on_flip=True, **extra):
                """
                Send a trigger and log when it was sent.

                stim     : link the trigger to this stimulus's row, adding
                           trigger_value / trigger_onset / trigger_delay to it
                label    : component_label for the standalone trigger row
                on_flip  : True  -> fire via win.callOnFlip, i.e. immediately after the
                                    buffer swap. Use for anything screen-locked.
                           False -> fire right now. Use for responses and for triggers
                                    at the very end of a routine.
                """
                value = int(value)

                def _fire():
                    t = self.now()                    # timestamp before the send
                    if self.send_fn is not None:
                        self.send_fn(value)
                    self._record_trigger(value, t, stim=stim, label=label, **extra)

                if on_flip and self.win is not None:
                    self.win.callOnFlip(_fire)
                else:
                    _fire()

            def _attach_trigger(self, row, value, t_abs):
                row["trigger_value"] = value
                row["trigger_onset"] = self._rel(t_abs)
                row["trigger_delay"] = row["trigger_onset"] - row["onset"]

            def _record_trigger(self, value, t_abs, stim=None, label=None, **extra):
                if stim is not None:
                    if stim in self.active:
                        self._attach_trigger(self.rows[self.active[stim]], value, t_abs)
                    else:
                        # row not created yet -> back-fill on the next schedule_onset
                        self.pending[stim] = {"value": value, "t": t_abs}

                if self.log_trigger_rows:
                    row = {"onset": self._rel(t_abs), "duration": 0.0,
                           "type_of_stimulus": "trigger",
                           "component_label": label or "trigger",
                           "trigger_value": value}
                    row.update(self.defaults)
                    row.update(extra)
                    self.rows.append(row)

            # -------------------------------------------------------------- output --
            def save(self, filename_base):
                out = Path(filename_base).with_suffix("")
                out = out.parent / (out.name + "_events.tsv")

                all_keys = list(self.col_order)
                for r in self.rows:
                    for k in r.keys():
                        if k not in all_keys:
                            all_keys.append(k)

                # BIDS requires onset-sorted rows; sort a copy so live indices stay valid
                rows_sorted = sorted(self.rows, key=lambda r: r.get("onset", 0.0))

                with open(out, "w", newline="", encoding="utf-8") as f:
                    w = csv.DictWriter(f, fieldnames=all_keys, delimiter="\t",
                                       extrasaction="ignore")
                    w.writeheader()
                    for r in rows_sorted:
                        out_row = {}
                        for k in all_keys:
                            v = r.get(k)
                            if v is None or (isinstance(v, float) and np.isnan(v)):
                                out_row[k] = "n/a"
                            else:
                                out_row[k] = v
                        w.writerow(out_row)

                return str(out)

            def trigger_report(self):
                """Quick console summary of stimulus-to-trigger delays, per label."""
                from collections import defaultdict
                by_label = defaultdict(list)
                for r in self.rows:
                    if r.get("trigger_delay") is not None and r.get("type_of_stimulus") != "trigger":
                        by_label[r.get("component_label", "?")].append(r["trigger_delay"] * 1000)
                lines = []
                for lab, d in sorted(by_label.items()):
                    d = np.asarray(d)
                    lines.append(f"{lab:>24s}  n={len(d):4d}  "
                                 f"median={np.median(d):6.2f} ms  "
                                 f"IQR=[{np.percentile(d,25):.2f}, {np.percentile(d,75):.2f}]  "
                                 f"max={d.max():6.2f}")
                return "\n".join(lines) if lines else "no linked triggers logged"


        bids = None


        def _bids_autosave():
            try:
                if bids and hasattr(bids, "rows"):
                    out = bids.save(thisExp.dataFileName)
                    print(f"[autosave] BIDS events written to: {out}")
                    print(bids.trigger_report())
            except Exception as e:
                print(f"[autosave] Failed to save BIDS events: {e}")
      Begin Routine:
        # ---- Create the logger once ----
        #bids = BIDSLogger(
            #win=win,
            #clock=globalClock,
            #default_cols=dict(
                #subject=expInfo.get("participant")
            #)
        #)

        bids = BIDSLogger(
            win=win,
            clock=globalClock,
            send_fn=send_trigger,
            default_cols=dict(subject=expInfo.get("participant"))
        )

        # write a header-only file immediately so each start creates a file
        _ = bids.save(thisExp.dataFileName)

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        atexit.register(_bids_autosave)
    CodeComponent set_trigger_numbers
      Code Type = Auto->JS
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      Begin Experiment:
        # define which trigger numbers to send
        trigger_numbers_dict = {
        "start/end": 255,
        "rest state start": 160,
        "rest state end": 161,
        }
    CodeComponent set_trigger_startexp
      Code Type = Auto->JS
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      Begin Routine:
        #send_trigger(value=trigger_numbers_dict["start/end"])
        bids.trigger(trigger_numbers_dict["start/end"], label="exp_start", on_flip=False)
  Routine instruction_part1
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    TextComponent instruction_rest_start
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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    CodeComponent set_instruction_rest_start_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "german":
            instruction_rest_start.text = (
              "Es folgt eine 5-minütige Ruhephase.\n"
            "Wir möchten messen, wie Ihr Gehirn arbeitet,\n"
            "wenn Sie gerade keine Aufgabe bearbeiten.\n"
            "Diese Ruhephasen sind für unsere Studie sehr wichtig.\n"
            "Bitte bleiben Sie dabei wach und halten Sie Kopf und Körper\n"
            "möglichst still.\n"
            "\n"
            "[Drücken Sie eine beliebige Taste, um fortzufahren.]"
            )

        if language == "english":
            instruction_rest_start.text = (
                    "A 5-minute rest period will follow.\n"
            "We would like to measure how your brain works\n"
            "when you are not doing a task.\n"
            "These rest periods are very important for our study.\n"
            "Please stay awake and keep your head and body\n"
            "as still as possible.\n"
            "\n"
            "[Press any key to continue.]"
            )
    KeyboardComponent continue_button
      allowedKeys = possible_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_start
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    TextComponent instruction_rest2
      font = $font_name
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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    CodeComponent set_instruction_rest2_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "german":
            instruction_rest2.text = (
                 "Drücken Sie eine beliebige Taste und schließen Sie dann die Augen.\n"
            "Lassen Sie Ihre Gedanken frei schweifen.\n"
            "\n"
            "Wir sagen Ihnen Bescheid, wenn die 5 Minuten vorbei sind."
            "\n"
            "[Drücken Sie eine beliebige Taste, um die Ruhephase zu beginnen.]"
            )

        if language == "english":
                instruction_rest2.text = (
                "Press any key, then close your eyes.\n"
            "Let your thoughts wander freely.\n"
            "\n"
            "We will let you know when the 5 minutes are over."
            "\n"
            "[Press any key to begin the rest period.]"
            )
    KeyboardComponent continue_button_2
      allowedKeys = possible_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine exp_settings
  Routine instruction_part1
  Routine instruction_start
  Routine resting_state
