PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = test_sounds_volume
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trials_sound_test
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    SoundComponent spoken_test
      durationEstim = 1
      forceEndRoutine = False
      resample = False
      sound [set every repeat] = $ "sounds//" + word_shown + ".mp3"
      startVal [time (s)] = 0.0
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  Routine break_3
    CodeComponent determine_run
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN in [8,16,24,32,40,48]:
            continueRoutine = True
        else:
            continueRoutine = False
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = BREAK
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    KeyboardComponent key_resp
      allowedKeys = "r", "g", "b", "y"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
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    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = +
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sequences/trials_volume_test.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'word_shown': 'book_en'},
      {'word_shown': 'fish_en'},
      {'word_shown': 'guitar_en'},
      {'word_shown': 'pencil_en'},
      {'word_shown': 'pizza_en'},
      {'word_shown': 'tree_en'},
      {'word_shown': 'plane_en'},
      {'word_shown': 'phone_en'}]
    Routine trials_sound_test
    Routine ISI
    Routine break_3
  LoopTerminator trials
